PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999)}"', 'software_version': '1'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 2
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = begibraintool
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
  rush = True
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  Data filename:
    f'data/{expInfo["participant"]}/{expName}_{expInfo["date"]}'
Routines
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  Routine calibration_routine
    RoutineSettingsComponent calibration_routine
      disabled = True
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    SliderComponent slider_3
      forceEndRoutine = False
      granularity = 0
      initVal = 0.5
      labels = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        periphereal_region_diameter = 0
      Each Frame:
        #periphereal_region_diameter = 0.5

        if slider_3.getRating() is not None:
            periphereal_region_diameter = slider_3.getRating()

        log_calibration.setText(f"Foveal region diameter: {periphereal_region_diameter:.2f}")
    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.015
      pos = (0.45, 0.450)
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Click here when calibrated
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    PolygonComponent periphereal_region_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size [set every frame] = periphereal_region_diameter
      startVal [time (s)] = 0.0
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    TextComponent log_calibration
      letterHeight = 0.025
      pos = (0.35, 0.35)
      startVal [time (s)] = 0.0
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  Routine BL_1_SPATIAL_FREQ
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    KeyboardComponent key_resp
      allowedKeys = 'space', 'right', 'left'
      forceEndRoutine = False
      startVal [time (s)] = 0
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    DotsComponent dots_black_5
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_white_5
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    GratingComponent stim
      color [set every repeat] = $[1,1,1]
      contrast [set every repeat] = 1
      mask = $grating_mask
      phase = 0.5
      pos [set every repeat] = (stim_x, stim_y)
      saveStartStop = False
      sf = 1
      size [set every repeat] = grating_size
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    CodeComponent GP_data_adq_backend
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        import socket

        # Host machine IP
        HOST = '127.0.0.1'
        # Gazepoint Port
        PORT = 4242
        ADDRESS = (HOST, PORT)

        # Connect to Gazepoint API
        s = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        s.connect(ADDRESS)

        # Send commands to initialize data streaming
        s.send(str.encode('<SET ID="ENABLE_SEND_CURSOR" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_POG_FIX" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_DATA" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_DIAL" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_HR" STATE="1" />\r\n'))
      Each Frame:
        # Receive data
        rxdat = s.recv(1024)
        data_r = bytes.decode(rxdat)
        #print(data_r)

        # Parse data string
        DIAL = 0
        HR = 0

        # Split data string into a list of name="value" substrings
        datalist = data_r.split(" ")
        #print(datalist)

        # Iterate through list of substrings to extract data values
        for el in datalist:
            if (el.find("DIAL=") != -1):
                print(el.split("\""))
                DIAL = float(el.split("\"")[1])
            if  (el.find("HR=") != -1):
                HR = float(el.split("\"")[1])

        # Print results

        GP_logs_2.text = f'DIAL: {DIAL}, HR: {HR}'
        #print("DIAL:", DIAL)
        #print("HR:", HR)
        #print("\n")
      End Routine:
        s.close()
    PolygonComponent logs_background_2
      fillColor = white
      pos = (0.75, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent logs
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent feedback_txt
      letterHeight = 0.085
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        from psychopy.iohub import launchHubServer

        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]

        #other
        gaze_position = mouse.getPosition()
      Begin Routine:
        ####################################################
        ########____LOAD STAIRCASE TEST RESULTS____#########
        ####################################################
        #threshold_dict = load_thresholds_from_json()
        spatial_frequency_threshold = threshold_dict['spatial_frequency_threshold']


        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = calcular_posicion_stim(posicion_angular, excentricidad, dim_y)
        diametros_central_periferica = calculate_diameter(9, 0.65, dim_y)
        diametros_estimulo = calculate_diameter(excentricidad, 0.65, dim_y)

        stim.sf = spatial_frequency_threshold + spatial_frequency_threshold*offset_porcentual/100
        stim.ori = orientacion


        #other

        logs_parametros_trial.alignText='left'
        logs_parametros_trial.anchorHoriz='left'

        event.clearEvents()

        first_frame             = True
        flag_skip_all           = False
        flag_answer_registered  = False
        success                 = -1
        undecided               = False

        logs.setAutoDraw(False)
        logs_parametros_trial.setAutoDraw(False)
        logs_background_2.setAutoDraw(False)
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        #gaze_position = mouse.getPosition()
        #logs_coordenadas_mirada.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')

        if advanced_config["logs"]["value"]:
            logs_parametros_trial.setText(
                f"Prueba 1 - Frecuencia espacial\n"
                f"Intento: {intento}\n"
                f"Orientación: {orientacion:.2f}\n"
                f"Excentricidad: {excentricidad}º\n"
                f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
                f"Tamaño Estímulo: {grating_size[0]:.2f}\n"
                f"Tipo: {tipo}\n"
                f"Umbral frecuencia espacial: {spatial_frequency_threshold:.2f}\n"
                f"Offset aplicado: {offset_porcentual}\n"
                f"SF mostrado: {spatial_frequency_threshold + spatial_frequency_threshold*offset_porcentual/100:.2f}"
            )
        else:
            logs.setAutoDraw(False)
            logs_parametros_trial.setAutoDraw(False)
            logs_background_2.setAutoDraw(False)

        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        #dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        #if dist_from_center <= 0.25/2:#foveal_region.radius:
        #    logs.setText("La mirada está dentro de la región")

        #else:
        #    logs.setText("La mirada está fuera de la región")

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        flag_skip_all           = False
        flag_answer_registered  = False
        undecided               = False
        success                 = -1

        # TODO: pasar a funcion

        keys = event.getKeys()
        if 'space' in keys:
            flag_skip_all = True

        elif 'right' in keys and orientacion == 45: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'left' in keys and orientacion == 135: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
            flag_answer_registered  = True
            success                 = False
        elif 'down' in keys or 'a' in keys: # NS/NC
            flag_answer_registered  = True
            success                 = False
            undecided               = True

        ####################################################
        ###############____TIME & NOISE____#################
        ####################################################

        if first_frame: # Ejecucion unica
            dots_white_5.setAutoDraw(False)
            dots_black_5.setAutoDraw(False)
            first_time = False

        if (t>stim_time) or flag_answer_registered: # time exceeded OR answer registered
            print(f"Respuesta registrada en instante {t} sobre {stim_time} con boton pulsado {flag_answer_registered} {keys}")
            # SHOW RESULTS IF FEEDBACK ACTIVATED
            if advanced_config["feedback"]["value"]:
                    #print(f"El resultado es: {success}")
                    show_feedback(feedback_txt, success)
                    #print("Se ha enseñado feedback desde each freame - bl1")
            # SHOW NOISE
            stim.setAutoDraw(False)
            show_noise(dots_white_5, dots_black_5, response_time, orientacion, feedback_txt) #only one call
            continueRoutine = False

        if flag_skip_all:
            print("Se ha omitido el bloque BL_1 por activación del flag")
            #trials_bl_1 = None
            trials_bl_1.finished = True
            #MODULE_1_TEST_1.finished = True
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  Routine BL_2_CONTRAST
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    KeyboardComponent key_resp_9
      allowedKeys = 'space', 'right', 'left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_7
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_white_7
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    GratingComponent stim_5
      color [set every repeat] = $[1,1,1]
      mask = $grating_mask
      phase = 0.5
      pos [set every repeat] = (stim_x, stim_y)
      saveStartStop = False
      sf = 1
      size [set every repeat] = grating_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      tex = sin
      texture resolution = 512
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    CodeComponent GP_data_adq_backend_5
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        import socket

        # Host machine IP
        HOST = '127.0.0.1'
        # Gazepoint Port
        PORT = 4242
        ADDRESS = (HOST, PORT)

        # Connect to Gazepoint API
        s = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        s.connect(ADDRESS)

        # Send commands to initialize data streaming
        s.send(str.encode('<SET ID="ENABLE_SEND_CURSOR" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_POG_FIX" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_DATA" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_DIAL" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_HR" STATE="1" />\r\n'))
      Each Frame:
        # Receive data
        rxdat = s.recv(1024)
        data_r = bytes.decode(rxdat)
        #print(data_r)

        # Parse data string
        DIAL = 0
        HR = 0

        # Split data string into a list of name="value" substrings
        datalist = data_r.split(" ")
        #print(datalist)

        # Iterate through list of substrings to extract data values
        for el in datalist:
            if (el.find("DIAL=") != -1):
                print(el.split("\""))
                DIAL = float(el.split("\"")[1])
            if  (el.find("HR=") != -1):
                HR = float(el.split("\"")[1])

        # Print results

        GP_logs_5.text = f'DIAL: {DIAL}, HR: {HR}'
        #print("DIAL:", DIAL)
        #print("HR:", HR)
        #print("\n")
      End Routine:
        s.close()
    PolygonComponent logs_background_8
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent feedback_txt_3
      letterHeight = 0.085
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Py
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      Begin Experiment:
        from psychopy.iohub import launchHubServer

        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]

        #other
        gaze_position = mouse.getPosition()
      Begin Routine:
        import math
        import random

        ####################################################
        ########____LOAD STAIRCASE TEST RESULTS____#########
        ####################################################
        #threshold_dict = load_thresholds_from_json()

        if (modules["module_1"]["tests"]["test_3"]["config"]["default_sf"]["value"]):
            spatial_frequency_threshold = modules["module_1"]["tests"]["test_3"]["config"]["gabor_sf"]["value"]
        else:
            spatial_frequency_threshold = threshold_dict['spatial_frequency_threshold']



        contrast_threshold = threshold_dict['contrast_threshold']

        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = calcular_posicion_stim(posicion_angular, excentricidad, dim_y)
        diametros_central_periferica = calculate_diameter(9, 0.65, dim_y)
        diametros_estimulo = calculate_diameter(excentricidad, 0.65, dim_y)

        stim_5.sf = spatial_frequency_threshold
        stim_5.contrast = contrast_threshold + contrast_threshold*offset_porcentual*(-1)
        stim_5.ori = orientacion

        #other
        gaze_position = mouse.getPosition()

        logs_parametros_trial_5.alignText='left'
        logs_parametros_trial_5.anchorHoriz='left'
        event.clearEvents()

        first_frame             = True
        flag_skip_all           = False
        flag_answer_registered  = False
        success                 = -1
        undecided               = False

        logs_parametros_trial_5.setAutoDraw(False)
        logs_background_8.setAutoDraw(False)
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        #gaze_position = mouse.getPosition()
        #logs_coordenadas_mirada_5.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')

        if advanced_config["logs"]["value"]:
            logs_parametros_trial_5.setText(
                f"Prueba 3 - Contraste\n"
                f"Intento: {intento}\n"
                f"Orientación: {orientacion:.2f}\n"
                f"Excentricidad: {excentricidad}º\n"
                f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
                f"Tamaño Estímulo: {grating_size[0]:.2f}\n"
                f"Tipo: {tipo}\n"
                f"Umbral contraste cargado: {contrast_threshold:.2f}\n"
                f"Offset aplicado: {offset_porcentual}\n"
                f"Contraste mostrado: {contrast_threshold + contrast_threshold*offset_porcentual/100:.2f}"
            )
        else:
            logs_parametros_trial_5.setAutoDraw(False)
            logs_background_8.setAutoDraw(False)


        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        #dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        #if dist_from_center <= 0.25/2:#foveal_region.radius:
        #    logs_6.setText("La mirada está dentro de la región")

        #else:
        #    logs_6.setText("La mirada está fuera de la región")

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################
        flag_skip_all           = False
        flag_answer_registered  = False
        undecided               = False
        success                 = -1

        keys = event.getKeys()
        if 'space' in keys:
            flag_skip_all = True

        elif 'right' in keys and orientacion == 45: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'left' in keys and orientacion == 135: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
            flag_answer_registered  = True
            success                 = False
        elif 'down' in keys or 'a' in keys: # NS/NC
            flag_answer_registered  = True
            success                 = False
            undecided               = True

        ####################################################
        ###############____TIME & NOISE____#################
        ####################################################

        if first_frame: # Ejecucion unica
            dots_white_7.setAutoDraw(False)
            dots_black_7.setAutoDraw(False)
            first_time = False

        if (t>stim_time) or flag_answer_registered: # time exceeded OR answer registered
            # SHOW RESULTS IF FEEDBACK ACTIVATED
            if advanced_config["feedback"]["value"]:
                print(f"El resultado es: {success}")
                show_feedback(feedback_txt_3, success)

            # SHOW NOISE
            stim_5.setAutoDraw(False)
            show_noise(dots_white_7, dots_black_7, response_time, orientacion, feedback_txt_3) #only one call
            continueRoutine = False

        if flag_skip_all:
            trials_bl_2.finished = True
  Routine BL_3_COLOR
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    KeyboardComponent key_resp_10
      allowedKeys = 'space', 'right', 'left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_6
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_white_6
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    CodeComponent GP_data_adq_backend_6
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
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      Each Frame:
        # Receive data
        rxdat = s.recv(1024)
        data_r = bytes.decode(rxdat)
        #print(data_r)

        # Parse data string
        DIAL = 0
        HR = 0

        # Split data string into a list of name="value" substrings
        datalist = data_r.split(" ")
        #print(datalist)

        # Iterate through list of substrings to extract data values
        for el in datalist:
            if (el.find("DIAL=") != -1):
                print(el.split("\""))
                DIAL = float(el.split("\"")[1])
            if  (el.find("HR=") != -1):
                HR = float(el.split("\"")[1])

        # Print results

        GP_logs_5.text = f'DIAL: {DIAL}, HR: {HR}'
        #print("DIAL:", DIAL)
        #print("HR:", HR)
        #print("\n")
      End Routine:
        s.close()
    PolygonComponent logs_background_10
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent stim_img
      image [set every repeat] = .\images\custom_stim.png
      size = grating_size
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent feedback_txt_2
      letterHeight = 0.085
      startVal [time (s)] = 0.0
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    CodeComponent code_14
      Code Type = Py
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      Before Experiment:
        import pandas as pd

        opacidad = 1
      Begin Experiment:
        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]
      Begin Routine:
        import math
        import random

        ####################################################
        ########____LOAD STAIRCASE TEST RESULTS____#########
        ####################################################
        #threshold_dict = load_thresholds_from_json()
        if (modules["module_1"]["tests"]["test_2"]["config"]["default_sf"]["value"]):
            spatial_frequency_threshold = modules["module_1"]["tests"]["test_2"]["config"]["gabor_sf"]["value"]
        else:
            spatial_frequency_threshold = threshold_dict['spatial_frequency_threshold']

        #frecuencia_espacial = threshold_dict['spatial_frequency_threshold']
        saturation_threshold = threshold_dict['color_threshold'][color_name]

        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = calcular_posicion_stim(posicion_angular, excentricidad, dim_y)
        diametros_central_periferica = calculate_diameter(9, 0.65, dim_y)
        diametros_estimulo = calculate_diameter(excentricidad, 0.65, dim_y)

        #stim_6.sf = frecuencia_espacial
        #stim_6.orientation = orientacion
        stim_img.ori = orientacion

        #other
        #gaze_position = mouse.getPosition()

        logs_parametros_trial_6.alignText='left'
        logs_parametros_trial_6.anchorHoriz='left'

        event.clearEvents()

        first_frame             = True
        flag_skip_all           = False
        flag_answer_registered  = False
        success                 = -1
        undecided               = False
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        #gaze_position = mouse.getPosition()
        #logs_coordenadas_mirada_6.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')

        if advanced_config["logs"]["value"]:
            logs_parametros_trial_6.setText(
                f"Prueba 2 - Color/saturación\n"
                f"Intento: {intento}\n"
                f"Orientación: {orientacion:.2f}\n"
                f"Excentricidad: {excentricidad}º\n"
                f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
                f"Tamaño Estímulo: {grating_size[0]:.2f}\n"
                f"SF aplicado: {spatial_frequency_threshold}\n"
                f"Offset (%): {umbral_porcentual:.2f}\n"
                f"Umbral color {color_name}(%): {saturation_threshold:.2f}\n"
                f"Sat. C1 (%): {c1_hsv[1]:.2f}\n"
                f"Sat. C2 (%): {c2_hsv[1]:.2f}\n"
        )

        else:
            logs_parametros_trial_6.setAutoDraw(False)
            logs_background_10.setAutoDraw(False)

        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        #dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        #if dist_from_center <= 0.25/2:#foveal_region.radius:
        #    logs_7.setText("La mirada está dentro de la circunferencia")

        #else:
        #    logs_7.setText("La mirada está fuera de la circunferencia")


        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################
        flag_skip_all           = False
        flag_answer_registered  = False
        undecided               = False
        success                 = -1

        keys = event.getKeys()
        if 'space' in keys:
            flag_skip_all = True

        elif 'right' in keys and orientacion == 45: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'left' in keys and orientacion == 135: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
            flag_answer_registered  = True
            success                 = False
        elif 'down' in keys or 'a' in keys: # NS/NC
            flag_answer_registered  = True
            success                 = False
            undecided               = True

        ####################################################
        ###############____TIME & NOISE____#################
        ####################################################

        if first_frame: # Ejecucion unica
            dots_white_6.setAutoDraw(False)
            dots_black_6.setAutoDraw(False)
            first_time = False

        if (t>stim_time) or flag_answer_registered: # time exceeded OR answer registered
            # SHOW RESULTS IF FEEDBACK ACTIVATED
            if advanced_config["feedback"]["value"]:
                print(f"El resultado es: {success}")
                show_feedback(feedback_txt_2, success)
             # SHOW NOISE
            stim_img.setAutoDraw(False)
            show_noise(dots_white_6, dots_black_6, response_time, orientacion, feedback_txt_2) #only one call
            continueRoutine = False

        if flag_skip_all:
            trials_bl_3.finished = True
    CodeComponent gabor_generator_2
      Code Type = Py
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      Before Experiment:
        import numpy as np
        from PIL import Image
        import matplotlib.pyplot as plt


        def save_gabor_patch_image(frequency, size, c1, c2):
            amp, f = generate_gabor_patch(frequency, size)

            # Convertir colores a numpy arrays y expandir dimensiones para el canal de transparencia
            c1 = np.array(c1)
            c2 = np.array(c2)

            # Calcular los valores de color para el parche
            im_rgb_vals = (c1 * amp[:, :, None]) + (c2 * (1 - amp[:, :, None]))

            # Crear el canal de alfa (transparencia): 1 donde hay el parche, 0 en el fondo
            alpha_channel = f

            # Combinar los valores RGB con el canal alfa para crear una imagen RGBA
            im_rgba_vals = np.dstack((im_rgb_vals, alpha_channel))

            # Convertir a imagen
            im = Image.fromarray((im_rgba_vals * 255).astype('uint8'), 'RGBA')
            im.save(f"./images/custom_stim.png")

        def generate_gabor_patch(frequency, size):
            im_range = np.arange(size)
            x, y = np.meshgrid(im_range, im_range)
            dx = x - size // 2
            dy = y - size // 2
            t = np.arctan2(dy, dx)
            r = np.sqrt(dx ** 2 + dy ** 2)
            x = r * np.cos(t)
            y = r * np.sin(t)

            amp = 0.5 * (1 + np.cos(2 * np.pi * (dx * frequency)))

            if grating_mask == 'circle':
                f = np.where(r <= size // 2, 1, 0)
            elif grating_mask == 'gauss':
                f = np.cos((np.pi * (r + size // 2)) / (size - 1) - np.pi / 2)
                f[r > size // 2] = 0
            else:
                f = 0

            return amp, f

        def hsv_a_rgb(h, s, v):
            """
            Convierte un color desde HSV a RGB.

            Parámetros:
            h (float): Matiz (Hue) en grados (0-360).
            s (float): Saturación (Saturation) como porcentaje (0-100).
            v (float): Valor (Value) como porcentaje (0-100).

            Retorna:
            tuple: Una tupla con valores (R, G, B), cada uno en el rango de 0 a 255.
            """
            h = h % 360
            s /= 100
            v /= 100

            c = v * s
            x = c * (1 - abs((h / 60) % 2 - 1))
            m = v - c

            if 0 <= h < 60:
                r, g, b = c, x, 0
            elif 60 <= h < 120:
                r, g, b = x, c, 0
            elif 120 <= h < 180:
                r, g, b = 0, c, x
            elif 180 <= h < 240:
                r, g, b = 0, x, c
            elif 240 <= h < 300:
                r, g, b = x, 0, c
            else:
                r, g, b = c, 0, x

            r = (r + m) * 255
            g = (g + m) * 255
            b = (b + m) * 255

            return int(round(r)), int(round(g)), int(round(b))


        def normalizar_rgb(rgb):
            """
            Normaliza una tupla de valores RGB dividiendo cada componente por 255.

            Parámetros:
            rgb (tuple): Una tupla con valores (R, G, B), cada uno en el rango de 0 a 255.

            Retorna:
            tuple: Una tupla con valores normalizados (R, G, B), cada uno en el rango de 0 a 1.
            """
            return tuple(component / 255 for component in rgb)
      Begin Routine:
        frequency = spatial_frequency_threshold/win.size[1] # division para equiparar con unidades del parche de psychopy

        size = 800
        c1_hsv = [color_1_h,color_1_s,color_1_v] # color del excel

        c2_hsv = [color_1_h,
                  min(100, color_1_s + saturation_threshold * umbral_porcentual / 100),# color del excel con modificacion segun umbral sin que supere el valor 100
                  color_1_v]


        #logs.text = f'freq = {frequency:.2f}\nc1 = ({c1[0]:.2f}, {c1[1]:.2f}, {c1[2]:.2f})\nc2 = ({c2[0]:.2f}, {c2[1]:.2f}, {c2[2]:.2f})'
        # Generar el parche de Gabor
        save_gabor_patch_image(frequency,
                               size,
                               normalizar_rgb(hsv_a_rgb(*c1_hsv)),
                               normalizar_rgb(hsv_a_rgb(*c2_hsv)))
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
  Routine BL_4_SEMANTIC_SF
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    KeyboardComponent key_resp_13
      allowedKeys = 'space', 'right', 'left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background_13
      disabled = True
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code_17
      Code Type = Py
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      Begin Routine:
        logs_parametros_trial_8.alignText='left'
        logs_parametros_trial_8.anchorHoriz='left'

        path_prefix = r"./images/autogenerated_datasets/module_1_images/"

        # TODO:
        # if 'marvo' r"./images/autogenerated_datasets/module_1_images/high¿?"
        # if 'neutro' r"./images/autogenerated_datasets/module_1_images/medium"
        # if 'parvo' r"./images/autogenerated_datasets/module_1_images/low"

        path_img_type = ""
        path_semantic_category = ""

        if tipo == 'magno':
            path_img_type = 'bandpass_0_3_cpd/'
        elif tipo == 'neutro':
            path_img_type = 'bandpass_3_6_cpd/'
        elif tipo == 'parvo':
            path_img_type = 'bandpass_6_30_cpd/'
        else:
            print("ERROR: Unrecognized category")

        if respuesta == 'vivo':
            path_semantic_category = 'animals/'
        elif respuesta == 'inerte':
            path_semantic_category = 'objects/'

        sf_semantic_stim_path = path_prefix + path_semantic_category + path_img_type + sf_path_2

        event.clearEvents()

        first_frame             = True
        flag_skip_all           = False
        flag_answer_registered  = False
        success                 = -1
        undecided               = False
      Each Frame:
        if advanced_config["logs"]["value"]:
            logs_parametros_trial_8.setText(
                f"Prueba 5 - Estímulos semánticos\n"
                f"Intento: {intento}\n"
                f"Excentricidad: {excentricidad}º\n"
                f"Tamaño Estímulo: {tamanyo:.2f}\n"
                f"Tipo: {tipo}\n"
                f"Tamanyo imagen cm: \n"
                #f"Ancho pantalla cm: {screen_width_cm}\n"       #= float(modules["module_1"]["tests"]["test_4"]["config"]["screen_width_cm"])
                #f"Distancia sujeto-pantalla cm: {distance_to_screen_cm}\n" #    = float(modules["module_1"]["tests"]["test_4"]["config"]["distance_to_screen_cm"])
                #f"Resolución pantalla dpi: {screen_resolution_dpi}\n" #    = float(modules["module_1"]["tests"]["test_4"]["config"]["screen_resolution_dpi"])
            )

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        flag_skip_all           = False
        flag_answer_registered  = False
        undecided               = False
        success                 = -1

        keys = event.getKeys()
        if 'space' in keys:
            flag_skip_all = True

        elif 'right' in keys and respuesta == 'vivo': # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'left' in keys and respuesta == 'inerte': # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
            flag_answer_registered  = True
            success                 = False
        elif 'down' in keys or 'a' in keys: # NS/NC
            flag_answer_registered  = True
            success                 = False
            undecided               = True

        ####################################################
        ###############____TIME & NOISE____#################
        ####################################################

        if first_frame: # Ejecucion unica
            dots_white_9.setAutoDraw(False)
            dots_black_9.setAutoDraw(False)
            first_time = False

        if (t>stim_time) or flag_answer_registered: # time exceeded OR answer registered
            # SHOW RESULTS IF FEEDBACK ACTIVATED
            if advanced_config["feedback"]["value"]:
                print(f"El resultado es: {success}")
                show_feedback(feedback_txt_5, success)
            semantic_stim.setAutoDraw(False)
            show_noise(dots_white_9, dots_black_9, response_time, 0, feedback_txt_5) #only one call
            continueRoutine = False

        if flag_skip_all:
            trials_bl_4.finished = True
    TextComponent logs_parametros_trial_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent right_arrow
      fillColor = white
      ori = 90
      pos = (0.65, 0)
      shape = arrow
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent left_arrow
      fillColor = white
      ori = -90
      pos = (-0.65, 0)
      shape = arrow
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent right_arrow_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0.65, 0)
      startVal [time (s)] = 0.0
      text = Ser vivo
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    TextComponent left_arrow_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.65, 0)
      startVal [time (s)] = 0.0
      text = Inerte
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    DotsComponent dots_white_9
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_9
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    ImageComponent semantic_stim
      image [set every repeat] = $sf_semantic_stim_path
      pos = (0.0, 0)
      size [set every repeat] = tamanyo
      startVal [time (s)] = 0.0
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    TextComponent feedback_txt_5
      letterHeight = 0.085
      startVal [time (s)] = 0.0
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  Routine CONTRAST_STAIRCASE_TEST
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    CodeComponent code_18
      Code Type = Py
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      Begin Routine:
        import csv
        import tkinter as tk
        from tkinter import messagebox

        # Variables estaticas
        contrast_starting_value = 0.15#0.05
        contrast_step_size = 0.02

        # Inicializacion de variables que posteriormente cambian
        contrast = contrast_starting_value
        staircase_test_orientation = get_random_orientation()
        step = contrast_step_size
        reversals = 0
        last_direction = None
        reversal_contrasts = []
        correct_responses = 0
        trials = []

        # Para almacenar las respuestas del participante
        response = None

        grating.contrast = contrast
        grating.ori = staircase_test_orientation

        # Cargar frecuencia espacial del test si se ha seleccionado la opcion
        # pretest_standard_thresholds_path = "./config_data/standard_thresholds.json"
        if advanced_config["pretest_standard_values"]["value"]:
            if not os.path.exists(pretest_standard_thresholds_path):
                root = tk.Tk()
                root.withdraw()  # Oculta la ventana principal
                messagebox.showwarning("Advertencia", f"No se ha encontrado el archivo de configuración estándar. Compruebe la ruta {pretest_standard_thresholds_path}.")
            else:
                _threshold_dict = load_thresholds_from_json(filename=pretest_standard_thresholds_path)
                spatial_frequency = _threshold_dict['spatial_frequency_threshold']
                threshold_dict = load_thresholds_from_json()  # archivo de usuario
                print(f"Se ha establecido la frecuencia espacial DEFAULT del estímulo a un valor de {spatial_frequency} unidades.")
        else:
            threshold_dict = load_thresholds_from_json() # archivo de usuario
            spatial_frequency = threshold_dict['spatial_frequency_threshold']
            print(f"Se ha establecido la frecuencia espacial del estímulo a un valor de {spatial_frequency} unidades.")

        grating.sf = spatial_frequency

        dots_white.setAutoDraw(False)
        dots_black.setAutoDraw(False)
      Each Frame:
        keys = event.getKeys()

        if 's' in keys: # El paciente ve el estimulo
            response = True
        elif 'a' in keys: # El paciente no ve las lineas
            response = False
        elif 'right' in keys and staircase_test_orientation == 45: # Acierto
            response = True
        elif 'left' in keys and staircase_test_orientation == 135: # Acierto
            response = True
        elif 'right' in keys or 'left' in keys:
            response = False

        # Lógica del staircase
        if response is not None:
            if response:  # Respuesta correcta: el paciente ve el estimulo
                correct_responses += 1
                if correct_responses == 2:  # Después de 2 respuestas correctas consecutivas
                    correct_responses = 0
                    contrast = max(0, contrast - step)  # Disminuir el contraste
                    last_direction = "down"
            else:  # Respuesta incorrecta: el paciente no ve el estimulo
                contrast += step  # Aumentar el contraste
                correct_responses = 0
                if last_direction == "down":
                    reversals += 1
                    reversal_contrasts.append(contrast)

                    if (reversals % 3 == 0) and reversals != 0:
                        step = step/2
                        print(f"Reversals = {reversals}; New step = {step}")
                        last_direction = "up"
                    else:
                        print('Reversal detected ({reversals})')
                last_direction = "up"

            grating.setAutoDraw(False)
            show_noise(dots_white, dots_black, staircase_noise_duration)
            grating.setAutoDraw(True)
            # Actualizar el contraste del estímulo
            grating.contrast = contrast
            staircase_test_orientation = get_random_orientation()
            grating.ori = staircase_test_orientation

            # Registrar la información del ensayo
            trials.append({
                'trial': len(trials) + 1,
                'contrast': contrast,
                'response': response,
                'reversals': reversals
            })

            # Restablecer la respuesta para el siguiente ensayo
            response = None

            # Regla de detencion
            if reversals >= stop_reversals:
                print(trials)
                # almaceno trials en 'data' para su posterior analisis
                staircase_data_filename = f"./data/{expInfo['participant']}/contrast_staircase_data_{expInfo['participant']}.csv"
                with open(staircase_data_filename, mode='w', newline='') as file:
                    writer = csv.DictWriter(file, fieldnames=['trial', 'contrast', 'response', 'reversals'])
                    writer.writeheader()
                    writer.writerows(trials)

                # Actualizar y almacenar el diccionario de thresholds
                test_contrast = get_threshold('contrast', staircase_data_filename)
                print(f"Contrast Threshold for patient: {test_contrast}")
                threshold_dict['contrast_threshold'] = test_contrast
                save_thresholds_to_json(threshold_dict)

                dots_white.setAutoDraw(False)
                dots_black.setAutoDraw(False)
                continueRoutine = False

        #########################################################
        #############____________LOGS_________###################
        #########################################################
        if advanced_config["logs"]["value"]:
            logs_10.text = f"Step Size = {step}"
        else:
            logs_10.setAutoDraw(False)

        dots_white.setAutoDraw(False)
        dots_black.setAutoDraw(False)
    KeyboardComponent key_resp_14
      allowedKeys = 's','n','right','left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent logs_10
      letterHeight = 0.025
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    GratingComponent grating
      mask = $grating_mask
      saveStartStop = False
      size = grating_size
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    DotsComponent dots_white
      coherence = 1.0
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine COLOR_STAIRCASE_TEST
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    CodeComponent code_19
      Code Type = Py
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      Begin Routine:
        import csv
        # Variables estaticas
        saturation_starting_value = 55
        saturation_step_size = 5
        staircase_test_orientation = get_random_orientation()

        # Inicializacion de variables que posteriormente cambian
        saturation = saturation_starting_value
        step = saturation_step_size
        reversals = 0
        last_direction = None
        reversal_saturations = []
        correct_responses = 0
        trials = []

        # Para almacenar las respuestas del participante
        response = None

        dots_white_2.setAutoDraw(False)
        dots_black_2.setAutoDraw(False)

        # Tipo de test
        if color_saturation_type == 'low':
            static_saturation = 0
            saturation_starting_value = 15
        elif color_saturation_type == 'high':
            static_saturation = 70
            saturation_starting_value = 100
        elif color_saturation_type == 'medium':
            static_saturation = 50
            saturation_starting_value = 70
        else:
            print("No se ha especificado un tipo de saturación a medir")
            static_saturation = 0
            saturation_starting_value = 0

        saturation = saturation_starting_value


        # Inicializacion de variables

        #threshold_dict = load_thresholds_from_json() # archivo de usuario
        #print(f"SE HA CARGADO THRESHOLD DICT EN COLOR: {threshold_dict}")

        if advanced_config["pretest_standard_values"]["value"]:
            if not os.path.exists(pretest_standard_thresholds_path):
                root = tk.Tk()
                root.withdraw()  # Oculta la ventana principal
                messagebox.showwarning("Advertencia", f"No se ha encontrado el archivo de configuración estándar. Compruebe la ruta {pretest_standard_thresholds_path}.")
            else:
                _threshold_dict = load_thresholds_from_json(filename=pretest_standard_thresholds_path)
                spatial_frequency = _threshold_dict['spatial_frequency_threshold']
                threshold_dict = load_thresholds_from_json()  # archivo de usuario
                print(f"Se ha establecido la frecuencia espacial DEFAULT del estímulo a un valor de {spatial_frequency} unidades.")

        else:
            spatial_frequency = threshold_dict['spatial_frequency_threshold']
            print(f"Se ha establecido la frecuencia espacial del estímulo a un valor personalizado de {spatial_frequency} unidades.")


        if not isinstance(threshold_dict, dict):
            threshold_dict = {}

        if 'color_threshold' not in threshold_dict:
            threshold_dict['color_threshold'] = {}


        frequency = spatial_frequency/500 # division para equiparar con psychopy
        size = 800
        c1_hsv = (color_h, static_saturation, color_v) # From XLS
        c2_hsv = (color_h, saturation, color_v)
        print(f"Testing color: {color_name}")

        image_2.ori = staircase_test_orientation

        # Generar el parche de Gabor
        save_gabor_patch_image(frequency,
                               size,
                               normalizar_rgb(hsv_a_rgb(*c1_hsv)),
                               normalizar_rgb(hsv_a_rgb(*c2_hsv)))
      Each Frame:
        keys = event.getKeys()

        if 's' in keys: # El paciente ve el estimulo
            response = True
        elif 'a' in keys: # El paciente no ve las lineas
            response = False
        elif 'right' in keys and staircase_test_orientation == 45: # Acierto
            response = True
        elif 'left' in keys and staircase_test_orientation == 135: # Acierto
            response = True
        elif 'right' in keys or 'left' in keys:
            response = False

        # Lógica del staircase
        if response is not None:
            if response:  # Respuesta correcta: el paciente ve el estimulo
                correct_responses += 1
                if correct_responses == 2:  # Después de 2 respuestas correctas consecutivas
                    correct_responses = 0
                    saturation = max(0, saturation - step)
                    if saturation < static_saturation:
                        # si pasa esto, el test se pasa de rosca. Hay que limitar el valor.
                        saturation = static_saturation
                    last_direction = "down"
            else:  # Respuesta incorrecta: el paciente no ve el estimulo
                saturation += step  # Aumentar el contraste
                if saturation > 100: # Limitar maximo para que no se pase de rosca
                    saturation = 100
                correct_responses = 0
                if last_direction == "down":
                    reversals += 1
                    reversal_saturations.append(saturation)
                    # Regla para aumentar la granularidad del test
                    if (reversals % 2 == 0) and reversals != 0:
                        step = step/2
                        print(f"Reversals = {reversals}; New step = {step}")
                        last_direction = "up"
                    else:
                        print(f'Reversal detected ({reversals})')
                last_direction = "up"

            image_2.setAutoDraw(False)
            show_noise(dots_white_2, dots_black_2, staircase_noise_duration)
            image_2.setAutoDraw(True)

            # Actualizar el color y rotacion del estímulo
            staircase_test_orientation = get_random_orientation()
            image_2.ori = staircase_test_orientation
            c2_hsv = (color_h, saturation, color_v)
            print(f"Color 1: {c1_hsv}\nColor 2: {c2_hsv}\n")

        #logs.text = f'freq = {frequency:.2f}\nc1 = ({c1[0]:.2f}, {c1[1]:.2f}, {c1[2]:.2f})\nc2 = ({c2[0]:.2f}, {c2[1]:.2f}, {c2[2]:.2f})'
        # Generar el parche de Gabor

            save_gabor_patch_image(frequency,
                               size,
                               normalizar_rgb(hsv_a_rgb(*c1_hsv)),
                               normalizar_rgb(hsv_a_rgb(*c2_hsv)))

            # Registrar la información del ensayo
            trials.append({
                'trial': len(trials) + 1,
                'saturation': saturation,
                'response': response,
                'reversals': reversals
            })

            # Restablecer la respuesta para el siguiente ensayo
            response = None

            # Regla de detencion
            if reversals >= stop_reversals:
                print(trials)
                # almaceno trials en 'data' para su posterior analisis
                staircase_data_filename = f"./data/{expInfo['participant']}/saturation_staircase_data_{expInfo['participant']}_{color_name}.csv"#_{color_saturation_type}.csv"
                with open(staircase_data_filename, mode='w', newline='') as file:
                    writer = csv.DictWriter(file, fieldnames=['trial', 'saturation', 'response', 'reversals'])
                    writer.writeheader()
                    writer.writerows(trials)

                # Actualizar y almacenar el diccionario de thresholds
                test_saturation = get_threshold('saturation', staircase_data_filename)
                print(f"Saturation Threshold for patient: {test_saturation}")
                threshold_dict['color_threshold'][color_name] = test_saturation-static_saturation
                save_thresholds_to_json(threshold_dict)


                continueRoutine = False

            dots_white_2.setAutoDraw(False)
            dots_black_2.setAutoDraw(False)

        #########################################################
        #############____________LOGS_________###################
        #########################################################
        if advanced_config["logs"]["value"]:
            logs_11.text = f"Step Size = {step}"
        else:
            logs_11.setAutoDraw(False)

        dots_white_2.setAutoDraw(False)
        dots_black_2.setAutoDraw(False)
    KeyboardComponent key_resp_15
      allowedKeys = 's','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent logs_11
      letterHeight = 0.025
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    CodeComponent gabor_generator
      Code Type = Py
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      Before Experiment:
        import numpy as np
        from PIL import Image
        import matplotlib.pyplot as plt


        def save_gabor_patch_image(frequency, size, c1, c2):
            amp, f = generate_gabor_patch(frequency, size)

            # Convertir colores a numpy arrays y expandir dimensiones para el canal de transparencia
            c1 = np.array(c1)
            c2 = np.array(c2)

            # Calcular los valores de color para el parche
            im_rgb_vals = (c1 * amp[:, :, None]) + (c2 * (1 - amp[:, :, None]))

            # Crear el canal de alfa (transparencia): 1 donde hay el parche, 0 en el fondo
            alpha_channel = f

            # Combinar los valores RGB con el canal alfa para crear una imagen RGBA
            im_rgba_vals = np.dstack((im_rgb_vals, alpha_channel))

            # Convertir a imagen
            im = Image.fromarray((im_rgba_vals * 255).astype('uint8'), 'RGBA')
            im.save(f"./images/custom_stim.png")

        def generate_gabor_patch(frequency, size):
            im_range = np.arange(size)
            x, y = np.meshgrid(im_range, im_range)
            dx = x - size // 2
            dy = y - size // 2
            t = np.arctan2(dy, dx)
            r = np.sqrt(dx ** 2 + dy ** 2)
            x = r * np.cos(t)
            y = r * np.sin(t)

            amp = np.where(np.cos(2 * np.pi * (x * frequency)) >= 0, 1, 0)

            if grating_mask == 'circle':
                f = np.where(r <= size // 2, 1, 0)
            elif grating_mask == 'gauss':
                f = np.cos((np.pi * (r + size // 2)) / (size - 1) - np.pi / 2)
                f[r > size // 2] = 0
            else:
                f = 0

            return amp, f

        def hsv_a_rgb(h, s, v):
            """
            Convierte un color desde HSV a RGB.

            Parámetros:
            h (float): Matiz (Hue) en grados (0-360).
            s (float): Saturación (Saturation) como porcentaje (0-100).
            v (float): Valor (Value) como porcentaje (0-100).

            Retorna:
            tuple: Una tupla con valores (R, G, B), cada uno en el rango de 0 a 255.
            """
            h = h % 360
            s /= 100
            v /= 100

            c = v * s
            x = c * (1 - abs((h / 60) % 2 - 1))
            m = v - c

            if 0 <= h < 60:
                r, g, b = c, x, 0
            elif 60 <= h < 120:
                r, g, b = x, c, 0
            elif 120 <= h < 180:
                r, g, b = 0, c, x
            elif 180 <= h < 240:
                r, g, b = 0, x, c
            elif 240 <= h < 300:
                r, g, b = x, 0, c
            else:
                r, g, b = c, 0, x

            r = (r + m) * 255
            g = (g + m) * 255
            b = (b + m) * 255

            return int(round(r)), int(round(g)), int(round(b))


        def normalizar_rgb(rgb):
            """
            Normaliza una tupla de valores RGB dividiendo cada componente por 255.

            Parámetros:
            rgb (tuple): Una tupla con valores (R, G, B), cada uno en el rango de 0 a 255.

            Retorna:
            tuple: Una tupla con valores normalizados (R, G, B), cada uno en el rango de 0 a 1.
            """
            return tuple(component / 255 for component in rgb)
    ImageComponent image_2
      image [set every frame] = .\images\custom_stim.png
      size = grating_size
      startVal [time (s)] = 0.0
      texture resolution = 512
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    DotsComponent dots_white_2
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_2
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPATIAL_FREQ_STAIRCASE_TEST
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    GratingComponent grating_7
      mask = $grating_mask
      saveStartStop = False
      size = grating_size
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    DotsComponent dots_black_3
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_white_3
      coherence = 1.0
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    CodeComponent code_20
      Code Type = Py
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      Begin Experiment:
        import random

        def get_random_orientation():
            return random.choice([45, 135])
      Begin Routine:
        import csv

        # Variables estaticas
        sf_starting_value = 50
        sf_step_size = 15
        sf_starting_orientation = get_random_orientation()


        # Inicializacion de variables que posteriormente cambian
        sf = sf_starting_value
        step = sf_step_size
        staircase_test_orientation = sf_starting_orientation
        reversals = 0
        last_direction = None
        reversal_sf = []
        correct_responses = 0
        trials = []

        # Para almacenar las respuestas del participante
        response = None

        # Acciones inicio de rutina
        grating_7.sf = sf
        grating_7.ori = staircase_test_orientation

        dots_white_3.setAutoDraw(False)
        dots_black_3.setAutoDraw(False)

        #threshold_dict = load_thresholds_from_json()     #cargar diccionario
        threshold_dict = {}
      Each Frame:
        keys = event.getKeys()

        if 's' in keys: # El paciente ve el estimulo
            response = True
        elif 'a' in keys: # El paciente no ve las lineas
            response = False
        elif 'right' in keys and staircase_test_orientation == 45: # Acierto
            response = True
        elif 'left' in keys and staircase_test_orientation == 135: # Acierto
            response = True
        elif 'right' in keys or 'left' in keys:
            response = False

        # Lógica del staircase
        if response is not None:
            if response:  # Respuesta correcta: el paciente ve las lineas del estimulo
                correct_responses += 1
                if correct_responses == 2:  # Después de 2 respuestas correctas consecutivas
                    correct_responses = 0
                    sf = max(0, sf + step)  # Aumentar las lineas
                    last_direction = "down"
            else:
                sf = sf - step
                if sf<=0:
                    sf = 2
                correct_responses = 0
                if last_direction == "down":
                    reversals += 1
                    reversal_sf.append(sf)
                    # Regla para aumentar la granularidad del test
                    if (reversals % 3 == 0) and reversals != 0:
                        step = step/2
                        print(f"Reversals = {reversals}; New step = {step}")
                        last_direction = "up"
                    else:
                        print(f'Reversal detected ({reversals})')
                last_direction = "up"

            grating_7.setAutoDraw(False)
            show_noise(dots_white_3, dots_black_3, staircase_noise_duration)
            grating_7.setAutoDraw(True)

            # Actualizar el sf y orientacion del estímulo
            grating_7.sf = sf
            staircase_test_orientation = get_random_orientation()
            grating_7.ori = staircase_test_orientation


            # Registrar la información del ensayo
            trials.append({
                'trial': len(trials) + 1,
                'spatial_frequency': sf,
                'response': response,
                'reversals': reversals
            })

            # Restablecer la respuesta para el siguiente ensayo
            response = None

            # Regla de detencion
            if reversals >= stop_reversals:
                print(trials)

                # almaceno trials en 'data' para su posterior analisis (CSV)
                staircase_data_filename = f"./data/{expInfo['participant']}/sf_staircase_data_{expInfo['participant']}.csv"

                with open(staircase_data_filename, mode='w', newline='') as file:
                    writer = csv.DictWriter(file, fieldnames=['trial', 'spatial_frequency', 'response', 'reversals'])
                    writer.writeheader()
                    writer.writerows(trials)

                # Actualizar y almacenar el diccionario de thresholds
                test_sf = get_threshold('spatial_frequency', staircase_data_filename)
                print(f"Spatial Frequency Threshold for patient: {test_sf}")
                threshold_dict['spatial_frequency_threshold'] = test_sf
                save_thresholds_to_json(threshold_dict)

                continueRoutine = False

        #########################################################
        #############____________LOGS_________###################
        #########################################################
        if advanced_config["logs"]["value"]:
            logs_12.text = f"Step Size = {step}; SF value = {sf}"
        else:
            logs_12.setAutoDraw(False)

        dots_white_3.setAutoDraw(False)
        dots_black_3.setAutoDraw(False)
    KeyboardComponent key_resp_16
      allowedKeys = 's','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent logs_12
      letterHeight = 0.025
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FFT_STAIRCASE_TEST
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    CodeComponent flicker_daemon
      Code Type = Auto->JS
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      Begin Routine:
        frecuencia_monitor = 144
        frecuencia_parpadeo = 30  # Hz, frecuencia de parpadeo deseada (valor inicial)
        frames_por_ciclo = int((frecuencia_monitor / frecuencia_parpadeo) / 2)
        opacidad = 1
      Each Frame:
        if fft is not None:
            frames_por_ciclo = int((frecuencia_monitor / fft) / 2)
            opacidad = 1 if (frameN % (2 * frames_por_ciclo)) < frames_por_ciclo else 0
        else:
            opacidad = 1

        dot.opacity = opacidad
    CodeComponent code_21
      Code Type = Py
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      Begin Routine:
        import csv

        # Variables estaticas
        fft_starting_value = 25
        fft_step_size = 2
        staircase_test_orientation = get_random_orientation()

        # Inicializacion de variables que posteriormente cambian
        fft = fft_starting_value
        step = fft_step_size
        reversals = 0
        last_direction = None
        reversal_ffts = []
        correct_responses = 0
        trials = []

        # Para almacenar las respuestas del participante
        response = None

        # Cargar frecuencia espacial del test
        #threshold_dict = load_thresholds_from_json()
        #grating_8.sf = threshold_dict['spatial_frequency_threshold']
        #grating_8.ori = staircase_test_orientation

        #print(f"Se ha establecido la frecuencia espacial del estímulo a un valor de {threshold_dict['spatial_frequency_threshold']} unidades.")
      Each Frame:
        keys = event.getKeys()

        if 's' in keys or 'right' in keys: # El paciente ve el estimulo
            response = True
        elif 'n' in keys or 'left' in keys: # El paciente no ve las lineas
            response = False
        '''
        elif 'right' in keys and staircase_test_orientation == 45: # Acierto
            response = True
        elif 'left' in keys and staircase_test_orientation == 135: # Acierto
            response = True
        elif 'right' in keys or 'left' in keys:
            response = False
        '''
        # Lógica del staircase
        if response is not None:
            if response:  # Respuesta correcta: el paciente ve el parpadeo
                correct_responses += 1
                if correct_responses == 2:  # Después de 2 respuestas correctas consecutivas
                    correct_responses = 0
                    fft = max(0, fft + step)  # Aumentar flicker
                    last_direction = "down"
            else:  # Respuesta incorrecta: el paciente no aprecia el parpadeo
                fft -= step  # disminuir el parpadeo
                correct_responses = 0
                if last_direction == "down":
                    reversals += 1
                    reversal_ffts.append(fft)
                    # Regla para aumentar la granularidad del test
                    if (reversals % 3 == 0) and reversals != 0:
                        step = step/2
                        print(f"Reversals = {reversals}; New step = {step}")
                        last_direction = "up"
                    else:
                        print(f'Reversal detected ({reversals})')
                last_direction = "up"

            dot.setAutoDraw(False)
            show_noise(dots_white_4, dots_black_4, staircase_noise_duration)
            dot.setAutoDraw(True)

            #staircase_test_orientation = get_random_orientation()
            #grating_8.ori = staircase_test_orientation

            # Actualizar el contraste del estímulo
            #grating.contrast = contrast

            # Registrar la información del ensayo
            trials.append({
                'trial': len(trials) + 1,
                'fft': fft,
                'response': response,
                'reversals': reversals
            })

            # Restablecer la respuesta para el siguiente ensayo
            response = None

            # Regla de detencion
            if reversals >= stop_reversals:
                print(trials)
                # almaceno trials en 'data' para su posterior analisis
                staircase_data_filename = f"./data/{expInfo['participant']}/fft_staircase_data_{expInfo['participant']}.csv"
                with open(staircase_data_filename, mode='w', newline='') as file:
                    writer = csv.DictWriter(file, fieldnames=['trial', 'fft', 'response', 'reversals'])
                    writer.writeheader()
                    writer.writerows(trials)

                # Actualizar y almacenar el diccionario de thresholds
                test_fft = get_threshold('fft', staircase_data_filename)
                print(f"FFT Threshold for patient: {test_fft}")
                #threshold_dict['flicker_threshold'] = test_fft
                #save_thresholds_to_json(threshold_dict)

                continueRoutine = False

        #########################################################
        #############____________LOGS_________###################
        #########################################################

        if advanced_config["logs"]["value"]:
            logs_13.text = f"Step Size = {step}\nFFT freq = {fft} Hz"


        dots_white_4.setAutoDraw(False)
        dots_black_4.setAutoDraw(False)
    KeyboardComponent key_resp_17
      allowedKeys = 'space', 'right', 'left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent logs_13
      letterHeight = 0.025
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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    GratingComponent grating_8
      disabled = True
      mask = circle
      saveStartStop = False
      size = grating_size
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    DotsComponent dots_white_4
      coherence = 1.0
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_4
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent FPS_counter_2
      Code Type = Auto->JS
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      Begin Routine:
        tiempo_anterior = 0
        fps = 0  # Variable para almacenar el FPS
      Each Frame:
        tiempo_actual = t
        delta_tiempo = tiempo_actual - tiempo_anterior # tiempo desde el frame anterior

        if delta_tiempo > 0:
            fps = 1.0 / delta_tiempo  # Frecuencia: (1 / tiempo entre frames) (Hz)

        tiempo_anterior = tiempo_actual

        FPS_logs_2.text = f"FPS: {fps:.2f}"  # Mostrar con 2 decimales
    TextComponent FPS_logs_2
      letterHeight = 0.025
      pos = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    PolygonComponent dot
      fillColor = white
      saveStartStop = False
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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  Routine INSTRUCTIONS
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    ImageComponent logo_begibraintool
      image = images/logo_BBT_no_bg.png
      pos = (0, 0.4)
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent logo_bio_2
      image = images/BIOBIZKAIA_horizontal_CMYK.png
      pos = (-0.6, 0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent logo_compneurolab_2
      image = images/compneuro_horizontal.png
      pos = (0.6, 0.4)
      saveStartStop = False
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_instructions_2
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    TextComponent text_instructions_title
      letterHeight = 0.035
      opacity = 0
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    CodeComponent code_9
      Code Type = Py
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      Begin Experiment:
        def calcular_relacion_aspecto(ruta_archivo):
            """
            Calcula la relación de aspecto de una imagen a partir de su anchura y altura.

            :param ruta_archivo: Ruta completa de la imagen (str).
            :return: Relación de aspecto (float).
            """
            try:
                with Image.open(ruta_archivo) as img:
                    anchura, altura = img.size
                    return anchura / altura
            except Exception as e:
                raise ValueError(f"Error al abrir la imagen: {e}")

        ##################################################################
        ##  CUSTOM PATH FOR INSTRUCTIONS DEPENDING ON LANGUAGE SELECTED ##
        ##################################################################

        language = general_config["language"]["value"].upper()

        # =========================================================
        # GLOBAL INSTRUCTIONS
        # =========================================================
        instruction_welcome_screen      = f"instructions/[{language}]WELCOME_SCREEN.xlsx"
        instruction_end_of_experiment   = f"instructions/[{language}]END_OF_EXPERIMENT.xlsx"
        instruction_tutorial_button_panel = f"instructions/tutorial_button_panel/[{language}]tutorial_button_panel.xlsx"

        # =========================================================
        # MODULE 1
        # =========================================================
        instruction_m1_tutorial_semantic     = f"instructions/module_1/tutorial_semantic_sf_color_contrast/[{language}]tutorial_semantic_sf_color_contrast.xlsx"

        # ---------- Module 1 · Staircases ----------
        instruction_m1_sf_staircase_1       = f"instructions/module_1/spatial_frequency_staircase/[{language}]spatial_frequency_staircase_instructions.xlsx"
        instruction_m1_sf_staircase_2       = f"instructions/module_1/spatial_frequency_staircase/[{language}]spatial_frequency_staircase_instructions_2.xlsx"
        instruction_m1_contrast_staircase   = f"instructions/module_1/[{language}]contrast_staircase_instructions.xlsx"
        instruction_m1_color_staircase      = f"instructions/module_1/[{language}]color_staircase_instructions.xlsx"

        # ---------- Module 1 · Block Instructions ----------
        instruction_m1_bl1 = f"instructions/module_1/[{language}]BL1_instructions.xlsx"
        instruction_m1_bl2 = f"instructions/module_1/[{language}]BL2_instructions.xlsx"
        instruction_m1_bl3 = f"instructions/module_1/[{language}]BL3_instructions.xlsx"
        instruction_m1_bl4 = f"instructions/module_1/[{language}]BL4_instructions.xlsx"
        instruction_m1_bl5 = f"instructions/module_1/[{language}]BL5_instructions.xlsx"
        instruction_m1_bl6 = f"instructions/module_1/[{language}]BL6_instructions.xlsx"

        # =========================================================
        # MODULE 2 · Eye Tracking & Visual Tasks
        # =========================================================
        instruction_m2_1_1_resting_et               = f"instructions/module_2/[{language}]1.1.RESTING_ET.xlsx"
        instruction_m2_1_2_et                       = f"instructions/module_2/[{language}]1.2.ET.xlsx"
        instruction_m2_2_fft                        = f"instructions/module_2/[{language}]2.FFT.xlsx"
        instruction_m2_3_1_saccade                  = f"instructions/module_2/[{language}]3.1.ET_SACCADE.xlsx"
        instruction_m2_3_2_antisaccade              = f"instructions/module_2/[{language}]3.2.ET_ANTISACCADE.xlsx"
        instruction_m2_3_3_saccade_and_antisaccade  = f"instructions/module_2/[{language}]3.3.ET_SACCADE_AND_ANTISACCADE.xlsx"
        instruction_m2_4_smooth_pursuit             = f"instructions/module_2/[{language}]4.SMOOTH_PURSUIT.xlsx"
        instruction_m2_5_static_visual_search       = f"instructions/module_2/[{language}]5.STATIC_VISUAL_SEARCH.xlsx"
        instruction_m2_6_dynamic_visual_search      = f"instructions/module_2/[{language}]6.DYNAMIC_VISUAL_SEARCH.xlsx"

        # =========================================================
        # MODULE 3 · Pupillometry & Affective Stimuli
        # =========================================================
        instruction_m3_pupillometry             = f"instructions/module_3/[{language}]1.PUPILLOMETRY.xlsx"
        instruction_m3_fearful_affective_images = f"instructions/module_3/[{language}]2.FEARFUL_&_AFFECTIVE_IMAGES.xlsx"
      Begin Routine:
        win.color = "grey"
        instructions_img_path = None
        relacion_aspecto = 1

        button_original_color = [-1.0000, 0.0039, -1.0000]
        button_pressed_color = [-1.0000, -0.2157, -1.0000]
        trial = thisExp.getCurrentTrial()

        instruction_no = 0
        messages_instructions = []
        images_instructions = []

        for i in range(1, 7):
            # TEXTOS
            txt = trial.get(f"instruction_{i}", None)
            if txt:
                messages_instructions.append(txt)

            # IMÁGENES
            img = trial.get(f"img_instruction_{i}", None)
            if img:
                images_instructions.append(img)
            else:
                images_instructions.append(None)

        print(f'Lista de instrucciones cargada: {messages_instructions}')
        print(f'Lista de imágenes cargada: {images_instructions}')
      Each Frame:
        text_instructions_2.text = messages_instructions[instruction_no]
        text_instructions_title.text = title

        ###################################################
        ####_____________IMAGE/VIDEO___________________####
        ###################################################
        if images_instructions[instruction_no] is not None:
            file_path = path_from_src + images_instructions[instruction_no]
            instructions_img_path = file_path
            relacion_aspecto = calcular_relacion_aspecto(file_path)
            instructions_image.size = (relacion_aspecto*0.4,0.4)

        else:
            instructions_img_path = None
            instructions_image.image = None

        ###################################################
        ####_______________BUTTONS_____________________####
        ###################################################

        if instruction_no == (len(messages_instructions) - 1):
            button_next_instruction_2.opacity = 0
            #button_next_instruction.status = PAUSED
        else:
            button_next_instruction_2.opacity = 1.0
            #button_next_instruction.status = STARTED

        if instruction_no == 0:
            button_previous_instruction_2.opacity = 0
            #button_previous_instruction.status = PAUSED
        else:
            button_previous_instruction_2.opacity = 1.0
            #button_previous_instruction.status = STARTED

        ###################################################
        ####________________EVENTS_____________________####
        ###################################################

        keys = event.getKeys()  # Cada llamada al buffer lo vacía

        if 'right' in keys:
            if instruction_no < len(messages_instructions)-1:
                instruction_no+=1
                button_next_instruction_2.fillColor = button_pressed_color
                win.flip()
                time.sleep(0.15)
                button_next_instruction_2.fillColor = button_original_color
                win.flip()
        elif 'left' in keys:
            if 0 < instruction_no:
                instruction_no-=1
                button_previous_instruction_2.fillColor = button_pressed_color
                win.flip()
                time.sleep(0.15)
                button_previous_instruction_2.fillColor = button_original_color
                win.flip()
    ImageComponent instructions_image
      image [set every frame] = $instructions_img_path
      pos = (0, -0.2)
      saveStartStop = False
      size [set every repeat] = (relacion_aspecto,1.2)
      startVal [time (s)] = 0.0
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    ButtonComponent button_next_instruction_2
      bold = True
      borderWidth = 0.1
      fillColor [set every repeat] = $button_original_color
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0.55, -0.4)
      saveStartStop = False
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = Siguiente -->
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      callback:
        if instruction_no < len(messages_instructions)-1:
            instruction_no+=1
            button_next_instruction_2.fillColor = button_pressed_color
            win.flip()
            time.sleep(0.15)
            button_next_instruction_2.fillColor = button_original_color
            win.flip()
    ButtonComponent button_previous_instruction_2
      bold = True
      borderWidth = 0.1
      fillColor = -1.0000, 0.0039, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (-0.55, -0.4)
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = <--Anterior
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      callback:
        if 0 < instruction_no:
            instruction_no-=1
            button_previous_instruction_2.fillColor = button_pressed_color
            win.flip()
            time.sleep(0.15)
            button_previous_instruction_2.fillColor = button_original_color
            win.flip()
    KeyboardComponent key_resp_skip_instructions_2
      allowedKeys = 'space','a','b'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.35
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  Routine LOAD_THRESHOLDS
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    CodeComponent code_22
      Code Type = Py
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      Begin Routine:
        import tkinter as tk
        from tkinter import messagebox
        import json

        # Llamada a la función
        threshold_dict = load_thresholds_from_json()

        # Manejo del resultado
        if threshold_dict == -1:
            # Crear ventana para manejar el caso de archivo no encontrado
            root = tk.Tk()
            root.withdraw()
            use_defaults = messagebox.askyesno(
                "Archivo no encontrado",
                "No se encontró el archivo de umbrales. ¿Desea usar valores por defecto?"
            )
            root.destroy()

            if use_defaults:
                # Valores por defecto
                threshold_dict = load_thresholds_from_json(filename = './config_data/standard_thresholds.json')

                #{
                #    "spatial_frequency_threshold": 100,
                #    "flicker_threshold": 50,
                #    "contrast_threshold": 0.03,
                #    "color_threshold": {
                #        "green": 25,
                #        "red": 25
                #    }
                #}
                print("Usando valores por defecto.")
            else:
                raise FileNotFoundError("El archivo de umbrales no se encontró y no se aceptaron valores por defecto.")

        else:
            # Mostrar los valores cargados en una ventana
            root = tk.Tk()
            root.withdraw()
            values = "\n".join([f"{key}: {value}" for key, value in threshold_dict.items()])
            messagebox.showinfo(
                f"Se cargaron los siguientes valores para el usuario {expInfo['participant']}:\n\n{values}\nSe ha establecido la siguiente configuración: {general_config}"
            )
            root.destroy()

        # Ahora `threshold_dict` contiene los valores seleccionados o los cargados
        print(threshold_dict)
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  Routine BL_5_SEMANTIC_CONTRAST
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    CodeComponent code_23
      Code Type = Py
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      Begin Routine:
        ####################################################
        ########____LOAD STAIRCASE TEST RESULTS____#########
        ####################################################

        contrast_threshold = threshold_dict['contrast_threshold']
        semantic_stim_2.contrast = contrast_threshold + contrast_threshold*semantic_contrast_offset/100

        logs_parametros_trial_9.alignText='left'
        logs_parametros_trial_9.anchorHoriz='left'

        event.clearEvents()

        first_frame             = True
        flag_skip_all           = False
        flag_answer_registered  = False
        success                 = -1
        undecided               = False

        ################################################
        ########_______GENERATE IMG PATH_______#########
        ################################################
        contrast_semantic_stim_path = ''
        path_prefix = r"./images/autogenerated_datasets/module_1_images/"
        path_semantic_category = ""

        if respuesta == 'vivo':
            path_semantic_category = 'animals/'
        elif respuesta == 'inerte':
            path_semantic_category = 'objects/'

        contrast_semantic_stim_path = path_prefix + path_semantic_category + 'silhouette/' + semantic_contrast_filename
      Each Frame:
        if advanced_config["logs"]["value"]:
                logs_parametros_trial_9.setText(
                f"Prueba 5 - Estímulos semánticos\n"
                f"Intento: {intento}\n"
                f"Excentricidad: {excentricidad}º\n"
                f"Tamaño Estímulo: {tamanyo:.2f}\n"
                f"Tipo: {respuesta}\n"
                f"Umbral detección contr.: {contrast_threshold}\n"
                f"Contraste: {contrast_threshold + contrast_threshold*semantic_contrast_offset/100}\n"
            )

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        flag_skip_all           = False
        flag_answer_registered  = False
        undecided               = False
        success                 = -1

        keys = event.getKeys()
        if 'space' in keys:
            flag_skip_all = True

        elif 'right' in keys and respuesta == 'vivo': # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'left' in keys and respuesta == 'inerte': # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
            flag_answer_registered  = True
            success                 = False
        elif 'down' in keys or 'a' in keys: # NS/NC
            flag_answer_registered  = True
            success                 = False
            undecided               = True

        ####################################################
        ###############____TIME & NOISE____#################
        ####################################################

        if first_frame: # Ejecucion unica
            dots_white_10.setAutoDraw(False)
            dots_black_10.setAutoDraw(False)
            first_time = False

        if (t>stim_time) or flag_answer_registered: # time exceeded OR answer registered
            # SHOW RESULTS IF FEEDBACK ACTIVATED
            if advanced_config["feedback"]["value"]:
                print(f"El resultado es: {success}")
                show_feedback(feedback_txt_6, success)
            semantic_stim_2.setAutoDraw(False)
            show_noise(dots_white_10, dots_black_10, response_time, 0, feedback_txt_6) #only one call
            continueRoutine = False

        if flag_skip_all:
            trials_bl_5.finished = True
    KeyboardComponent key_resp_22
      allowedKeys = 'space', 'right', 'left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background_14
      disabled = True
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent right_arrow_2
      fillColor = white
      ori = 90
      pos = (0.65, 0)
      shape = arrow
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent left_arrow_2
      fillColor = white
      ori = -90
      pos = (-0.65, 0)
      shape = arrow
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent right_arrow_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0.65, 0)
      startVal [time (s)] = 0.0
      text = Ser vivo
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    TextComponent left_arrow_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.65, 0)
      startVal [time (s)] = 0.0
      text = Inerte
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    DotsComponent dots_white_10
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_10
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    ImageComponent semantic_stim_2
      image [set every repeat] = $contrast_semantic_stim_path
      pos = (0.0, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent feedback_txt_6
      letterHeight = 0.085
      startVal [time (s)] = 0.0
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  Routine PUPILOMETRY_TASK_adaptation_period
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    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Routine:
        win.color = "black"
      Each Frame:
        if not hasattr(thisExp, 'last_print_time'):
            thisExp.last_print_time = 0

        if t - thisExp.last_print_time >= 1:  # Every 1 sec
            remaining_time = adaptation_time - int(t)

            minutes = remaining_time // 60
            seconds = remaining_time % 60

            print(f"{minutes:02d}:{seconds:02d}")

            thisExp.last_print_time = t  # Actualiza el último tiempo de impresión

        if t>adaptation_time:
            continueRoutine = False
    KeyboardComponent key_resp_23
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = 0.0902, -1.0000, -1.0000
      lineColor = 0.0902, -1.0000, -1.0000
      opacity = 0.9
      shape = cross
      size = (0.015, 0.015)
      startVal [time (s)] = 0.0
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  Routine PUPILOMETRY_TASK_flash
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    CodeComponent code_24
      Code Type = Auto->JS
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      Begin Routine:
        win.color = color
        thisExp.addData(f"{color}StartTime", time.time())
      Each Frame:
        if t>flash_time:
            continueRoutine = False
      End Routine:
        win.color = "grey"
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flash_time
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    KeyboardComponent key_resp_24
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SMOOTH_PURSUIT
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    DotsComponent dots_2
      coherence = noise_dots_coherence
      color = $noise_dots_color
      dir [set every frame] = noise_dots_direction
      dotLife = noise_dots_lifetime
      dotSize = noise_dots_size
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [field_size[0]+0.5,field_size[1]+0.5]
      nDots = noise_dots_no
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = noise_dots_speed
      startVal [time (s)] = 0.0
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    PolygonComponent dot_2
      fillColor = $dot_color
      lineColor = $dot_border_color
      shape = circle
      size = dot_size
      startVal [time (s)] = 0.0
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    CodeComponent code_26
      Code Type = Py
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      Begin Experiment:
        import numpy as np
        import threading
        import time

        def move_dot_smooth(dot, dot_speed, field_size, current_angle, frames_in_direction, frame_count):
            """
            Mueve el punto 'dot' de forma suave dentro de los límites de la pantalla.

            dot: objeto visual de PsychoPy que se va a mover.
            dot_speed: velocidad del punto.
            field_size: tamaño del campo [ancho, alto] en unidades de PsychoPy.
            current_angle: ángulo actual de la dirección del punto.
            frames_in_direction: número de frames en los que el punto mantiene la misma dirección.
            frame_count: contador de frames que indica cuántos frames han pasado en la dirección actual.

            Returns:
            - new_angle: El ángulo actualizado para la próxima llamada.
            - frame_count: El contador de frames actualizado.
            """
            # Si hemos alcanzado el límite de frames para la dirección actual, cambiamos el ángulo
            if frame_count >= frames_in_direction:
                # Elegir un nuevo ángulo aleatorio cercano al actual para mantener la suavidad
                current_angle += np.random.uniform(-np.pi/8, np.pi/8)
                frame_count = 0  # Reiniciar el contador de frames en la nueva dirección
            else:
                frame_count += 1

            # Calcular el desplazamiento basado en el ángulo
            dx = dot_speed * np.cos(current_angle)
            dy = dot_speed * np.sin(current_angle)

            # Calcular la nueva posición
            new_x = dot.pos[0] + dx
            new_y = dot.pos[1] + dy

            # Verificar los límites de la pantalla y ajustar si es necesario
            border = 0.25
            if new_x < -(field_size[0]-border)/2:
                new_x = -(field_size[0]-border)/2
                current_angle = np.pi - current_angle  # Invertir dirección horizontal
            elif new_x > (field_size[0]-border)/2:
                new_x = (field_size[0]-border)/2
                current_angle = np.pi - current_angle

            if new_y < -(field_size[1]-border)/2:
                new_y = -(field_size[1]-border)/2
                current_angle = -current_angle  # Invertir dirección vertical
            elif new_y > (field_size[1]-border)/2:
                new_y = (field_size[1]-border)/2
                current_angle = -current_angle

            # Actualizar la posición del punto
            dot.pos = (new_x, new_y)

            return current_angle, frame_count

        def move_dot_lateral(dot, dot_speed, field_size, direction, frame_count):
            """
            Mueve el punto 'dot' de forma lineal lateral (derecha a izquierda) dentro de los límites del campo definido.

            dot: objeto visual de PsychoPy que se va a mover.
            dot_speed: velocidad del punto.
            field_size: tamaño del campo [ancho, alto] en unidades de PsychoPy.
            direction: dirección actual del movimiento, 1 para derecha y -1 para izquierda.
            frame_count: contador de frames que indica cuántos frames han pasado.

            Returns:
            - direction: La dirección actualizada para la próxima llamada.
            - frame_count: El contador de frames actualizado.
            """
            # Calcular el desplazamiento basado en la dirección
            dx = dot_speed * direction
            new_x = dot.pos[0] + dx
            new_y = dot.pos[1]  # Mantener y constante

            # Verificar los límites de la pantalla en el eje x y ajustar si es necesario
            if new_x < -field_size[0] / 2:
                new_x = -field_size[0] / 2
                direction *= -1  # Cambiar de dirección
            elif new_x > field_size[0] / 2:
                new_x = field_size[0] / 2
                direction *= -1  # Cambiar de dirección

            # Actualizar la posición del punto
            dot.pos = (new_x, new_y)

            return direction, frame_count + 1



        def fade_in_stimulus(stimulus, duration=3.0, steps=30):
            """
            Ajusta la opacidad de un estímulo de 0 a 1 en un tiempo dado.
            Se ejecuta en un hilo separado.
            """
            def worker():
                for i in range(steps+1):
                    opacity = i/steps
                    stimulus.opacity = opacity
                    time.sleep(duration/steps)
            threading.Thread(target=worker, daemon=True).start()
      Begin Routine:
        current_angle = np.random.uniform(0, 2 * np.pi)  # Ángulo inicial aleatorio
        frame_count = 0
        frames_in_direction = 20  # Ajusta según la duración que desees para cada dirección
        direction = 1 # start value of direction to te right
        mode = 1 # behaviour of the stimuli and noise dots 1... 2... 3: Move noise with stimuli. 4:...
        noise_activated = True # Default. Do not touch.
        noise_coherent_motion = True

        win.color = modules["module_2"]["tests"]["test_4"]["config"]["background_color"]["value"]

        enable_noise_dots = modules["module_2"]["tests"]["test_4"]["config"]["enable_noise_dots"]["value"]

        if not enable_noise_dots:
            dots_2.setAutoDraw(False)
            dots_2.opacity = 0



        # ==============================
        # LOAD DEFINED STIMULUS TRAJECTORY
        # ==============================
        USE_DEFINED_TRAJECTORY = True

        if USE_DEFINED_TRAJECTORY:
            defined_traj_path = r".\CSV_protocol_config_files\module_2_test_4\smooth_pursuit_stimulus_trajectory_FRAMES.npy"
            loaded_traj = np.load(defined_traj_path)

            # Expect shape: [n_frames, 3] -> time, x, y
            defined_xy = loaded_traj[:, 1:3].astype(np.float32)

            defined_traj_len = defined_xy.shape[0]

            # Safety: start at first point
            stim_frame_idx = 0

        traj_start_time = globalClock.getTime()
        traj_dt = 1/240.0   # frecuencia original con la que se generó la trayectoria


        # ==============================
        # PREALLOCATED STIMULUS TRAJECTORY (SMOOTH PURSUIT)
        # ==============================
        # Allocate memory to save the trajectory

        expected_duration = 75.0  # seconds
        fps = win.getActualFrameRate()

        if fps is None:
            fps = 60.0  # fallback seguro

        max_frames = int(expected_duration * fps * 1.2)

        # [time, x, y]
        stim_traj = np.empty((max_frames, 3), dtype=np.float32)

        stim_frame_idx = 0
      Each Frame:
        USE_DEFINED_TRAJECTORY = modules["module_2"]["tests"]["test_4"]["config"]["defined_trajectory"]["value"]

        # LOADED TRAJECTORY:
        if USE_DEFINED_TRAJECTORY and mode != 3: # ONLY TRAJECTORIES (DURING MODE 3 NOISE DIRECTION IS MODIFIED)
            elapsed = globalClock.getTime() - traj_start_time
            target_idx = int(elapsed / traj_dt)

            if target_idx < defined_traj_len:
                dot_2.pos = defined_xy[target_idx]
            else:
                continueRoutine = False

        elif USE_DEFINED_TRAJECTORY and mode == 3:
            elapsed = globalClock.getTime() - traj_start_time
            target_idx = int(elapsed / traj_dt)

            if target_idx < defined_traj_len:
                dot_2.pos = defined_xy[target_idx]

                # --- Compute angle from trajectory ---
                if stim_frame_idx > 0:
                    x_prev, y_prev = defined_xy[stim_frame_idx - 1]
                    dx = x - x_prev
                    dy = y - y_prev
                    # Protect against zero movement
                    if dx != 0 or dy != 0:
                        current_angle = math.atan2(dy, dx)
                # --- Noise follows stimulus direction ---
                if noise_coherent_motion:
                    if frame_count % (frames_in_direction * 5) == 0:
                        desvio = random.uniform(-20, 20)
                    noise_dots_direction = math.degrees(current_angle) + desvio
            else:
                continueRoutine = False

        # RANDOM TRAJECTORY:
        elif mode == 1: # movimiento random del estimulo. Cuando cambia la coherencia del ruido el estimulo se mantiene igual
            current_angle, frame_count = move_dot_smooth(dot_2, dot_speed, field_size, current_angle, frames_in_direction, frame_count)

        elif mode == 2: # movimiento lateral del estimulo. Cuando cambia la coherencia del ruido el estimulo se mantiene igual
            direction, frame_count = move_dot_lateral(dot_2, dot_speed, field_size, direction, frame_count)

        elif mode == 3:
            current_angle, frame_count = move_dot_smooth(dot_2, dot_speed, field_size, current_angle, frames_in_direction, frame_count)

            if noise_coherent_motion: # Move noise with stimuli
                #if frame_count % frames_in_direction*5 == 0: # each 100 frames change angle
                if frame_count % (frames_in_direction * 5) == 0:
                    desvio = random.uniform(-20, 20)
                noise_dots_direction = math.degrees(current_angle) + desvio

        elif mode == 4:
            if noise_coherent_motion: # True
                direction, frame_count = move_dot_lateral(dot_2, dot_speed, field_size, direction, frame_count)
            else:
                current_angle, frame_count = move_dot_smooth(dot_2, dot_speed, field_size, current_angle, frames_in_direction, frame_count)

        # FLANCOS ASCENDENTE Y DESCENDENTE - Cambiar la coherencia del ruido segun el tiempo
        if t<20: # MOVE DOT, NO NOISE
            if noise_activated:
                 dots_2.setAutoDraw(False)
                 thisExp.addData(f"DVS_noise_coherent_motion_mode_1_StartTime", time.time())
                 noise_activated = False

        elif t>20 and t<30: # MOVE DOT, WITH RANDOM NOISE
            if noise_coherent_motion:
                dots_2.setFieldCoherence(0)
                noise_coherent_motion = 0
                #noise_dots_direction = 90
                thisExp.addData(f"DVS_noise_coherent_motion_mode_2_StartTime", time.time())
                dots_2.opacity = 0
                if enable_noise_dots: dots_2.setAutoDraw(True)
                noise_activated = True
                # Opacity transition
                fade_in_stimulus(dots_2, duration=3.0, steps=60)  # 3 seg, 60 pasos

        elif t>30 and t<40: # MOVE DOT, WITH COHERENT NOISE
            if not noise_coherent_motion:
                dots_2.setFieldCoherence(1)
                noise_coherent_motion = 1
                #noise_dots_direction = 90
                thisExp.addData(f"DVS_noise_coherent_motion_mode_3_StartTime", time.time())
                if enable_noise_dots: dots_2.setAutoDraw(True)
                noise_activated = True
                mode = 3

        elif t>40 and t<50: # MOVE DOT, WITH RANDOM NOISE
            if noise_coherent_motion:
                dots_2.setFieldCoherence(0)
                noise_coherent_motion = 0
                noise_dots_direction = 0
                current_angle = 0
                direction = 1
                mode = 4
                thisExp.addData(f"DVS_noise_coherent_motion_mode_4_StartTime", time.time())

        elif t>50 and t<60: # MOVE DOT HORIZONTAL, WITH RANDOM NOISE
            if not noise_coherent_motion:
                dots_2.setFieldCoherence(0)
                noise_coherent_motion = 1
                noise_dots_direction = 0
                current_angle = 0
                direction = 1
                mode = 2
                thisExp.addData(f"DVS_noise_coherent_motion_mode_5_StartTime", time.time())
        else: # MOVE DOT HORIZONTAL, WITH COHERENT NOISE
            if noise_coherent_motion:
                dots_2.setFieldCoherence(1)
                noise_coherent_motion = 0
                #noise_dots_direction = 0
            elif t>75:
                continueRoutine = False

        # ==============================
        # REGISTER STIMULUS POSITION
        # ==============================

        t_now = globalClock.getTime()
        x, y = dot_2.pos

        stim_traj[stim_frame_idx, 0] = t_now
        stim_traj[stim_frame_idx, 1] = x
        stim_traj[stim_frame_idx, 2] = y

        stim_frame_idx += 1
      End Routine:
        # ==============================
        # TRIM UNUSED FRAMES
        # ==============================

        stim_traj = stim_traj[:stim_frame_idx]

        # Save as numpy (recommended for offline analysis)
        np.save(f"./data/{expInfo['participant']}/smooth_pursuit_stimulus_trajectory_frames", stim_traj)

        # also store in PsychoPy data
        #thisExp.addData(f"./data/{expInfo['participant']}/smooth_pursuit_stimulus_trajectory_frames", stim_frame_idx)
    KeyboardComponent key_resp_25
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine CONFIGURATION_ROUTINE
    RoutineSettingsComponent CONFIGURATION_ROUTINE
      desc = Loads screen config (defined in screen_config.json) and initializes global variables & functions
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    CodeComponent SCREEN_CONFIG
      Code Type = Py
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      Begin Experiment:
        periphereal_region_diameter = 0

        ################################
        ## CONFIGURACION MODIFICABLE: ##
        ################################
        nombre_pantalla = 'pantalla4'
        distancia_eyetracker = 0.65 # m
        alpha = angulo_region_central = 9 # º DEG
      Begin Routine:
        import json
        import math

        print(f"Participant info: {expInfo['participant']}")

        def calculate_diameter(excentricity, distance_to_screen, screen_height  = None):
            '''
            Calculates the diameter of circunference correspondint to the excentricity angle depending on the screen height and distance to screen.
            Params:
                -excentricity: angle of the excentricity in degrees
                -distance_to_screen: distance between patient and screen in meters
                -screen_height: height of the screen in meters (default is None, in this case the function will only return the diameter in unit that psychopy understands)
            Returns:
                -diameter_unit: unit diameter (this is the diameter that psychopy understands, it should match with the diameter in meters when used)
                -diameter_m: diameter in meters (this is the real diameter it should have in the screen)
            '''

            if screen_height == None:
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return None, diameter_m
            else:
                diameter_unit = (2 * distance_to_screen * math.sin(math.radians(excentricity)))/screen_height
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return diameter_unit, diameter_m

        def calcular_posicion_stim(angulo_grados, excentricidad, altura_pantalla):
            # primero calculo el diametro en pantalla correspondiente a la excentricidad
            diameter_unit, _ = calculate_diameter(excentricidad, 0.65, altura_pantalla)
            radius = diameter_unit / 2

            #hallo el punto donde mostrar el estimulo sobre la circunferencia de la excentricidad deseada
            theta = math.radians(angulo_grados)
            stim_x = radius * math.cos(theta)
            stim_y = radius * math.sin(theta)

            return stim_x, stim_y
        # Cargar el archivo JSON
        def cargar_configuracion(nombre_pantalla):
            with open('./config_data/screen_config.json', 'r') as file:
                config = json.load(file)

            # Seleccionar la configuración específica
            pantalla_config = config.get(nombre_pantalla)

            if pantalla_config:
                nombre = pantalla_config['nombre']
                tamanyo_pulgadas = pantalla_config['tamanyo']
                dim_y = pantalla_config['dim_y']
                frecuencia_monitor = pantalla_config['frecuencia']

                print(f'Se ha cargado la siguiente configuracion:\n'
                      f'Pantalla {nombre_pantalla} de {tamanyo_pulgadas} pulgadas con altura {dim_y} m')
                return nombre, tamanyo_pulgadas, dim_y,frecuencia_monitor
            else:
                print("Configuración de pantalla no encontrada.")
                return None, None, None, None  # Devolver None para cada valor esperado

        nombre, tamanyo_pulgadas, dim_y, frecuencia_monitor = cargar_configuracion(nombre_pantalla)


        if nombre:  # Comprobar que nombre no es None antes de usar las variables
            # Calcular el diámetro de la frontera de la periferia

            diameter_unit, diameter_m = calculate_diameter(alpha, distancia_eyetracker, dim_y)
            periphereal_region_diameter = diameter_unit

            #log = f'Se ha cargado la configuracion de la {nombre_pantalla}:\n Pantalla {nombre} de {tamanyo_pulgadas} pulgadas con altura {dim_y} m y {frecuencia_monitor} Hz.'
            #print(log)

        print(
                     f'Se ha cargado la configuracion de la {nombre_pantalla}:\n Pantalla {nombre} de {tamanyo_pulgadas} pulgadas con altura {dim_y} m y {frecuencia_monitor} Hz.\n'
                     f'Para una distancia de {distancia_eyetracker} m entre el sujeto y la pantalla, el diametro debe ser de {diameter_unit:.2f} u.\n'
                     f'El diámetro equivalente es de {diameter_m:.2f} m'
                     )
    CodeComponent DATA_MANAGEMENT
      Code Type = Py
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      Begin Experiment:
        # Función para mostrar el diccionario completo al final del test
        def display_thresholds(threshold_dict):
            print("Valores de Umbrales del Paciente:")
            print(f"Frecuencia Espacial: {threshold_dict['spatial_frequency_threshold']}")
            print(f"Flicker: {threshold_dict['flicker_threshold']}")
            print(f"Contraste: {threshold_dict['contrast_threshold']}")
            print("Umbrales de Color:")
            for color, value in threshold_dict['color_threshold'].items():
                print(f"{color}: {value}")

        # Función para guardar el diccionario en un archivo JSON
        def save_thresholds_to_json(threshold_dict, filename=f"./data/{expInfo['participant']}/thresholds_{expInfo['participant']}.json"):
            with open(filename, 'w') as f:
                json.dump(threshold_dict, f, indent=4)  # indent para que el JSON sea legible
            print(f"Diccionario guardado en {filename}")

        # Función para cargar el diccionario desde un archivo JSON
        def load_thresholds_from_json(filename=f"./data/{expInfo['participant']}/thresholds_{expInfo['participant']}.json"):
            if not os.path.exists(filename):
                # Archivo no encontrado
                return -1
            else:
                # Archivo encontrado y valores cargados
                with open(filename, 'r') as f:
                    threshold_dict = json.load(f)
                print(f"Diccionario cargado desde {filename}")
                return threshold_dict
    CodeComponent MODULE_SELECTION_GUI
      Code Type = Py
      disabled = True
      Before Experiment:
        import tkinter as tk
        from tkinter import ttk
        import json
        import os

        CONFIG_FILE = "config_data/last_protocol_selection.json"

        # Diccionario de configuración general
        global general_config

        general_config = { # Se sobreescribe si se encuentra fichero de configuracion anterior
            "feedback": False,
            "logs": False,
            "full_screen_noise": False,
            "gabor_texture": None,
            "pretest_standard_values": True,
            "remember_protocol": False,
            "tutorial":True
        }

        # Diccionario de módulos y tests
        modules = {
            "module_1": {
                "name": "MODULE 1: Spatial Vision (low level-stimuli and semantic stimuli)",
                "selected": False,
                "tests": {
                    "pretest": {"name": "Threshold estimation test", "selected": False, "enabled": True},
                    "test_1": {"name": "1.Spatial Frequency", "selected": False, "enabled": True},
                    "test_2": {"name": "2.Color Vision", "selected": False, "enabled": True},
                    "test_3": {"name": "3.Contrast Sensitivity", "selected": False, "enabled": True},
                    "test_4": {"name": "4.Semantic Stim Spatial Frequency", "selected": False, "enabled": True,
                        "config": {
                            "screen_width_cm": None,
                            "distance_to_screen_cm": None,
                            "screen_resolution_dpi": None,
                            "magno_low_sf": None,
                            "magno_high_sf": None,
                            "parvo_low_sf": None,
                            "parvo_high_sf": None,
                            "neutro_low_sf": None,
                            "neutro_high_sf": None}
                    },
                    "test_5": {"name": "5.Semantic Stim Contrast Sensitivity", "selected": False, "enabled": True},
                    "test_6": {"name": "6.Semantic Stim Color Vision", "selected": False, "enabled": True}
                }
            },
            "module_2": {
                "name": "MODULE 2: Dynamic Vision and Eye Tracking",
                "selected": False,
                "tests": {
                    "test_1": {"name": "1.Fixation stability (resting state eye-tracking test)", "selected": False, "enabled": True},
                    "test_2": {"name": "2.Flicker fusion threshold", "selected": False, "enabled": True},
                    "test_3": {"name": "3.Saccadic and antisaccadic movement eye-tracking", "selected": False, "enabled": True},
                    "test_4": {"name": "4.Smooth pursuit eye-tracking", "selected": False, "enabled": True},
                    "test_5": {"name": "5.Visual search eye-tracking", "selected": False, "enabled": True}
                }
            },
            "module_3": {
                "name": "MODULE 3: Dynamic Pupilometry and Autonomic Response (sweating and Heart Rate Variability) to Visual Stimuli",
                "selected": False,
                "tests": {
                    "test_1": {"name": "1.Elementary full-field achromatic and chromatic light stimulus", "selected": False, "enabled": True},
                    "test_2": {"name": "2.Fearful and affective semantic stimuli (images)", "selected": False, "enabled": True}
                }
            }
        }


        def update_module_from_tests(module_id):
            """
            Marca automáticamente el módulo como seleccionado si al menos un test está seleccionado.
            """
            any_test_selected = any(test_var.get() for test_var in test_vars[module_id].values())
            module_vars[module_id].set(any_test_selected)

        def update_tests(module_id, var):
            """
            Actualiza los estados de los tests al seleccionar/deseleccionar un módulo.
            """
            is_selected = var.get()
            for test_id, test in modules[module_id]["tests"].items():
                if test["enabled"]:
                    test_vars[module_id][test_id].set(is_selected)

        def create_tooltip(widget, text):
            tooltip = tk.Toplevel(widget)
            tooltip.wm_overrideredirect(True)
            tooltip.withdraw()
            label = tk.Label(tooltip, text=text, background="#ffffe0", relief="solid", borderwidth=1, font=("tahoma", 8))
            label.pack()

            def enter(event):
                x = widget.winfo_rootx() + 20
                y = widget.winfo_rooty() + 20
                tooltip.wm_geometry(f"+{x}+{y}")
                tooltip.deiconify()

            def leave(event):
                tooltip.withdraw()

            widget.bind("<Enter>", enter)
            widget.bind("<Leave>", leave)

        def save_selection():
            """
            Guarda los valores seleccionados en el diccionario original y cierra la ventana.
            """
            for module_id, module in modules.items():
                module["selected"] = module_vars[module_id].get()
                for test_id, test in module["tests"].items():
                    test["selected"] = test_vars[module_id][test_id].get()

                    # Guardar los campos especiales del test_4 del módulo 1
                    if module_id == "module_1" and test_id == "test_4":
                        test.setdefault("config", {})
                        test["config"]["screen_width_cm"] = width_var.get()
                        test["config"]["distance_to_screen_cm"] = distance_var.get()
                        test["config"]["screen_resolution_dpi"] = dpi_var.get()

                        # Guardar las frecuencias espaciales (Magno, Parvo, Neutro)
                        test["config"]["magno_low_sf"] = magno_low_var.get()
                        test["config"]["magno_high_sf"] = magno_high_var.get()
                        test["config"]["parvo_low_sf"] = parvo_low_var.get()
                        test["config"]["parvo_high_sf"] = parvo_high_var.get()
                        test["config"]["neutro_low_sf"] = neutro_low_var.get()
                        test["config"]["neutro_high_sf"] = neutro_high_var.get()
                        test["config"]["difficulty_mode"] = difficulty_var.get()

            # Guardar valores de configuración general
            general_config["feedback"] = feedback_var.get()
            general_config["logs"] = logs_var.get()
            general_config["full_screen_noise"] = noise_var.get()
            general_config["gabor_texture"] = mask_var.get()
            general_config["pretest_standard_values"] = pretest_values_var.get()
            general_config["remember_protocol"] = remember_var.get()
            general_config["tutorial"] = remember_var.get()



            # GUARDAR EN JSON SI SE HA SELECCIONADO LA OPCION
            if general_config["remember_protocol"]:
                with open(CONFIG_FILE, "w") as f:
                    json.dump({
                        "general_config": general_config,
                        "modules": modules
                    }, f, indent=4)
            elif os.path.exists(CONFIG_FILE):
                os.remove(CONFIG_FILE)

            root.destroy()

        def load_saved_configuration():
            if os.path.exists(CONFIG_FILE):
                print("Previously used config file was found")
                with open(CONFIG_FILE, "r") as f:
                    data = json.load(f)
                    return data.get("general_config", {}), data.get("modules", {})
            else:
                print("No config file was found. Showing default selection menu.")
            return None, None

        def update_difficulty(*args):
            mode = difficulty_var.get()

            # Lista de entradas personalizadas
            entries = [
                magno_low_entry, magno_high_entry,
                parvo_low_entry, parvo_high_entry,
                neutro_low_entry, neutro_high_entry
            ]

            if mode == "custom":
                # Habilitar entradas
                for e in entries:
                    e.config(state="normal")
            else:
                # Deshabilitar entradas
                for e in entries:
                    e.config(state="disabled")

                # Poner valores predefinidos
                if mode == "easy":
                    magno_low_var.set("0.5"); magno_high_var.set("2.0")
                    parvo_low_var.set("2.0"); parvo_high_var.set("4.0")
                    neutro_low_var.set("1.0"); neutro_high_var.set("3.0")
                elif mode == "medium":
                    magno_low_var.set("0.5"); magno_high_var.set("3.0")
                    parvo_low_var.set("3.0"); parvo_high_var.set("6.0")
                    neutro_low_var.set("2.0"); neutro_high_var.set("5.0")
                elif mode == "hard":
                    magno_low_var.set("1.0"); magno_high_var.set("4.0")
                    parvo_low_var.set("4.0"); parvo_high_var.set("8.0")
                    neutro_low_var.set("3.0"); neutro_high_var.set("6.0")

        # Update module selection from file
        # Marcar automaticamente si se ha seleccionado la opcion
        # Intentar cargar configuración previa si remember_protocol está activo
        saved_general, saved_modules = load_saved_configuration()
        print(saved_general)
        print(saved_modules)
        if saved_general and saved_modules:
            general_config.update(saved_general)
            for module_id in modules:
                if module_id in saved_modules:
                    modules[module_id]["selected"] = saved_modules[module_id].get("selected", False)
                    for test_id in modules[module_id]["tests"]:
                        modules[module_id]["tests"][test_id]["selected"] = saved_modules[module_id]["tests"].get(test_id, {}).get("selected", False)
                        # Si tiene config especial, como test_4
                        if "config" in modules[module_id]["tests"][test_id]:
                            modules[module_id]["tests"][test_id]["config"].update(
                                saved_modules[module_id]["tests"].get(test_id, {}).get("config", {})
                            )

        ##############################################################################
        ##____________MAIN WINDOW____________####____________MAIN WINDOW____________##
        ##############################################################################

        # Crear la ventana principal
        root = tk.Tk()
        root.title("Select Modules and Tests")

        # Variables de control
        module_vars = {}
        test_vars = {}

        # Frame superior para entrada de DNI, botón y mensaje de estado
        top_frame = ttk.Frame(root)
        top_frame.pack(side="top", fill="x", padx=10, pady=10)


        # Etiqueta que se actualizará cuando se pulse el botón "Comprobar"
        status_label = ttk.Label(top_frame, text="", foreground="green")
        status_label.pack(side="left", padx=10)

        # Crear widgets dinámicos
        for module_id, module in modules.items():
            module_vars[module_id] = tk.BooleanVar(value=module["selected"])
            module_checkbox = ttk.Checkbutton(
                root, text=module["name"], variable=module_vars[module_id],
                command=lambda mid=module_id, var=module_vars[module_id]: update_tests(mid, var)
            )
            module_checkbox.pack(anchor="w", padx=10, pady=5)

            test_vars[module_id] = {}
            for test_id, test in module["tests"].items():
                test_vars[module_id][test_id] = tk.BooleanVar(value=test["selected"])
                test_checkbox = ttk.Checkbutton(
                    root, text=test["name"], variable=test_vars[module_id][test_id],
                    command=lambda mid=module_id: update_module_from_tests(mid),
                    state=tk.NORMAL if test["enabled"] else tk.DISABLED
                )
                test_checkbox.pack(anchor="w", padx=30)

                #######################################################
                ## Campos de frecuencia espacial --> modulo 1 test 4

                if module_id == "module_1" and test_id == "test_4":
                    width_var = tk.StringVar()
                    distance_var = tk.StringVar()
                    dpi_var = tk.StringVar()

                    width_frame = ttk.Frame(root)
                    width_frame.pack(anchor="w", padx=60)
                    width_label = ttk.Label(width_frame, text="Ancho pantalla (cm)")
                    width_label.pack(side="left")
                    width_entry = ttk.Entry(width_frame, textvariable=width_var, width=10)
                    width_entry.pack(side="left", padx=5)
                    info1 = ttk.Label(width_frame, text="ⓘ", foreground="blue")
                    info1.pack(side="left")
                    create_tooltip(info1, "Ancho físico de la pantalla en centímetros.")
                    width_entry.insert(0, "40")

                    distance_frame = ttk.Frame(root)
                    distance_frame.pack(anchor="w", padx=60)
                    distance_label = ttk.Label(distance_frame, text="Distancia a pantalla (cm)")
                    distance_label.pack(side="left")
                    distance_entry = ttk.Entry(distance_frame, textvariable=distance_var, width=10)
                    distance_entry.pack(side="left", padx=5)
                    info2 = ttk.Label(distance_frame, text="ⓘ", foreground="blue")
                    info2.pack(side="left")
                    create_tooltip(info2, "Distancia desde el observador a la pantalla en centímetros.")
                    distance_entry.insert(0, "57")

                    dpi_frame = ttk.Frame(root)
                    dpi_frame.pack(anchor="w", padx=60)
                    dpi_label = ttk.Label(dpi_frame, text="Resolución (DPI)")
                    dpi_label.pack(side="left")
                    dpi_entry = ttk.Entry(dpi_frame, textvariable=dpi_var, width=10)
                    dpi_entry.pack(side="left", padx=5)
                    info3 = ttk.Label(dpi_frame, text="ⓘ", foreground="blue")
                    info3.pack(side="left")
                    create_tooltip(info3, "Resolución de la pantalla en puntos por pulgada (DPI).\nCalcula el valor en https://pixelcalculator.com/es")
                    dpi_entry.insert(0, "244")


        # Checkboxes para configuración general
        feedback_var = tk.BooleanVar(value=general_config["feedback"])
        logs_var = tk.BooleanVar(value=general_config["logs"])
        noise_var = tk.BooleanVar(value=general_config["full_screen_noise"])
        mask_var = tk.StringVar(value="gauss")  # Valor por defecto
        pretest_values_var = tk.BooleanVar(value=general_config["pretest_standard_values"])
        remember_var = tk.BooleanVar(value=general_config["remember_protocol"])
        tutorial_var = tk.BooleanVar(value=general_config["tutorial"])

        feedback_checkbox = ttk.Checkbutton(root, text="Enable Feedback", variable=feedback_var)
        feedback_checkbox.pack(anchor="w", padx=10, pady=5)

        logs_checkbox = ttk.Checkbutton(root, text="Enable Logs", variable=logs_var)
        logs_checkbox.pack(anchor="w", padx=10, pady=5)

        noise_checkbox = ttk.Checkbutton(root, text="Full Screen Noise", variable=noise_var)
        noise_checkbox.pack(anchor="w", padx=10, pady=5)

        mask_combobox = ttk.Combobox(root, textvariable=mask_var, values=["gauss", "circle"], state="readonly")
        mask_combobox.pack(anchor="w", padx=10, pady=5)

        noise_checkbox = ttk.Checkbutton(root, text="Use standard values for pretest", variable=pretest_values_var)
        noise_checkbox.pack(anchor="w", padx=10, pady=5)

        remember_checkbox = ttk.Checkbutton(root, text="Remember last protocol configuration", variable=remember_var)
        remember_checkbox.pack(anchor="w", padx=10, pady=5)

        tutorial_checkbox = ttk.Checkbutton(root, text="Tutorial before test", variable=tutorial_var)
        tutorial_checkbox.pack(anchor="w", padx=10, pady=5)

        ## --------------------------------------------------------------------------------------------
        # Variables para SF

        # Variable para el modo de dificultad
        difficulty_var = tk.StringVar(value="custom")
        difficulty_var.trace_add("write", update_difficulty)


        magno_low_var = tk.StringVar()
        magno_high_var = tk.StringVar()
        parvo_low_var = tk.StringVar()
        parvo_high_var = tk.StringVar()
        neutro_low_var = tk.StringVar()
        neutro_high_var = tk.StringVar()

        sf_frame = ttk.LabelFrame(root, text="Frecuencias espaciales (ciclos/°)")
        sf_frame.pack(anchor="w", padx=60, pady=10)

        # Magno
        #ttk.Label(sf_frame, text="Magno (low - high)").grid(row=0, column=0, sticky="w")
        #ttk.Entry(sf_frame, textvariable=magno_low_var, width=8).grid(row=0, column=1, padx=5)
        #ttk.Entry(sf_frame, textvariable=magno_high_var, width=8).grid(row=0, column=2, padx=5)

        # Parvo
        #ttk.Label(sf_frame, text="Parvo (low - high)").grid(row=1, column=0, sticky="w")
        #ttk.Entry(sf_frame, textvariable=parvo_low_var, width=8).grid(row=1, column=1, padx=5)
        #ttk.Entry(sf_frame, textvariable=parvo_high_var, width=8).grid(row=1, column=2, padx=5)

        # Neutro
        #ttk.Label(sf_frame, text="Neutro (low - high)").grid(row=2, column=0, sticky="w")
        #ttk.Entry(sf_frame, textvariable=neutro_low_var, width=8).grid(row=2, column=1, padx=5)
        #ttk.Entry(sf_frame, textvariable=neutro_high_var, width=8).grid(row=2, column=2, padx=5)




        # Magno
        magno_low_entry = ttk.Entry(sf_frame, textvariable=magno_low_var, width=8)
        magno_low_entry.grid(row=0, column=1, padx=5)
        magno_high_entry = ttk.Entry(sf_frame, textvariable=magno_high_var, width=8)
        magno_high_entry.grid(row=0, column=2, padx=5)

        # Parvo
        parvo_low_entry = ttk.Entry(sf_frame, textvariable=parvo_low_var, width=8)
        parvo_low_entry.grid(row=1, column=1, padx=5)
        parvo_high_entry = ttk.Entry(sf_frame, textvariable=parvo_high_var, width=8)
        parvo_high_entry.grid(row=1, column=2, padx=5)

        # Neutro
        neutro_low_entry = ttk.Entry(sf_frame, textvariable=neutro_low_var, width=8)
        neutro_low_entry.grid(row=2, column=1, padx=5)
        neutro_high_entry = ttk.Entry(sf_frame, textvariable=neutro_high_var, width=8)
        neutro_high_entry.grid(row=2, column=2, padx=5)



        difficulty_frame = ttk.LabelFrame(root, text="Modo de dificultad")
        difficulty_frame.pack(anchor="w", padx=60, pady=10)

        ttk.Radiobutton(difficulty_frame, text="Fácil", variable=difficulty_var, value="easy").pack(side="left", padx=5)
        ttk.Radiobutton(difficulty_frame, text="Medio", variable=difficulty_var, value="medium").pack(side="left", padx=5)
        ttk.Radiobutton(difficulty_frame, text="Difícil", variable=difficulty_var, value="hard").pack(side="left", padx=5)
        ttk.Radiobutton(difficulty_frame, text="Custom", variable=difficulty_var, value="custom").pack(side="left", padx=5)


        # Valores iniciales de ejemplo
        magno_low_var.set("0.1")
        magno_high_var.set("2.0")
        parvo_low_var.set("1.0")
        parvo_high_var.set("8.0")
        neutro_low_var.set("1.0")
        neutro_high_var.set("4.0")

        ## --------------------------------------------------------------------------------------------

        # Botón para guardar y cerrar
        save_button = ttk.Button(root, text="Continue", command=save_selection)
        save_button.pack(pady=20)

        # Ejecutar la ventana
        root.mainloop()

        # Mostrar toda la configuración por consola
        print("\n--- Configuración general ---")
        print(general_config)

        print("\n--- Configuración de módulos y tests ---")
        for module_id, module in modules.items():
            print(f"\n{module['name']} (selected: {module['selected']})")
            for test_id, test in module["tests"].items():
                print(f"  - {test['name']} (selected: {test['selected']})")
                if "config" in test:
                    for key, val in test["config"].items():
                        print(f"      {key}: {val}")
    CodeComponent EXT_MODULE_SELECTION_GUI
      Code Type = Py
      Before Experiment:
        import sys
        import os

        # Asegúrate de que el directorio del script esté en sys.path
        script_path = os.path.join(os.getcwd(), "python_scripts/gui.py")
        sys.path.append(os.path.dirname(script_path))

        from gui import BegibraintoolGUI  # importa tu GUI principal

        my_gui = BegibraintoolGUI()
        general_config, advanced_config, modules = my_gui.run()
        print("General config:", general_config)
        print("Advanced config:", advanced_config)
        print("Modules:", modules)
    CodeComponent GLOBAL_VARIABLES_AND_FUNCTIONS
      Code Type = Py
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      Before Experiment:
        # IMPORTS
        from psychopy import core
        import random
        import threading
        import time
        import pandas as pd
        import os

        # DIRECTORIES
        pretest_standard_thresholds_path = "./config_data/standard_thresholds.json"

        #GLOBAL VARIABLES
        global noise_type
        global grating_mask

        general_settings = modules["module_1"]["config"]["general_settings"]

        stim_time = general_settings["stim_time"]["value"]
        response_time = general_settings["response_time"]["value"]      # time to answer after stimuli disapears
        noise_type = general_settings["noise_type"]["value"]            # noise_type= 2 # 1: FULL WINDOW // 2: ONLY STIM. Value changed in Begin Experiment (GUI)
        noise_field_size = general_settings["noise_field_size"]["value"]# noise_field_size = [1.75,1]
        noise_dots = general_settings["noise_dots"]["value"]            # noise_dots = 25000
        #grating_size = general_settings["grating_size"]["value"]       # grating_size = (0.5,0.5)
        #sf_images_cpd_ranges = general_settings["sf_images_cpd_ranges"]["value"]


        # Grating config
        grating_mask = modules["module_1"]["config"]["grating"]["grating_mask"]["value"]#advanced_config["gabor_texture"]["value"]
        grating_size = modules["module_1"]["config"]["grating"]["grating_size"]["value"]# grating_size = (0.5,0.5)

        # MODULE 1: pretest - staircase test params
        pretest_config = modules["module_1"]["tests"]["pretest"]["config"]

        n_reversals_to_average = pretest_config["n_reversals_to_average"]["value"]
        stop_reversals = pretest_config["stop_reversals"]["value"]
        staircase_noise_duration = pretest_config["staircase_noise_duration"]["value"]

        # MODULE 1: Experiment params
        #stim_time = 2
        #response_time = 0.5 # time to answer after stimuli disapears

        #global noise_type
        #noise_type= 2 # 1: FULL WINDOW // 2: ONLY STIM. Value changed in Begin Experiment (GUI)
        #noise_field_size = [1.75,1]
        #noise_dots = 25000
        #grating_size = (0.5,0.5)

        continueRoutine_ref = [True]

        # spatial frequency images
        sf_images_cpd_ranges = [(1, 3), (4, 6), (10, 18)]  # Ejemplo de filtros paso banda

        # MODULE 2:
        # Eye Tracking Resting State test
        #eye_tracking_resting_state_time = 60
        #eye_tracking_resting_state_background_color = 'black'
        resting_cfg = modules["module_2"]["tests"]["test_1"]["config"]
        eye_tracking_resting_state_time = resting_cfg["eye_tracking_resting_state_time"]["value"]
        eye_tracking_resting_state_background_color = resting_cfg["eye_tracking_resting_state_background_color"]["value"]


        # Visual Search test params
        #visual_search_image_time = 5.5
        #visual_search_wait_time = 1
        vs_cfg = modules["module_2"]["tests"]["test_5"]["config"]
        vs_image_time = vs_cfg["visual_search_image_time"]["value"]
        vs_wait_time = vs_cfg["visual_search_wait_time"]["value"]

        # SMOOTH PURSUIT

        # Test 3: DVS Smooth Pursuit
        dvs_cfg = modules["module_2"]["tests"]["test_4"]["config"]
        dot_size = dvs_cfg["dot_size"]["value"]
        noise_dots_size = dvs_cfg["noise_dots_size"]["value"]
        noise_dots_no = dvs_cfg["noise_dots_no"]["value"]
        dot_speed = dvs_cfg["dot_speed"]["value"]
        noise_dots_speed = dvs_cfg["noise_dots_speed"]["value"]
        #dot_coherence = dvs_cfg["dot_coherence"]["value"]
        dot_color = dvs_cfg["dot_color"]["value"]
        dot_border_color = dvs_cfg["dot_border_color"]["value"]
        noise_dots_color = dvs_cfg["noise_dots_color"]["value"]
        noise_dots_lifetime = dvs_cfg["noise_dots_lifetime"]["value"]
        field_size = dvs_cfg["field_size"]["value"]


        #dot_size            = 10/1000 # change this value to make it similar to the other dots
        #noise_dots_size     = 15 #dot_size

        #noise_dots_no       = 700
        dot_coherence       = 0.0 # do not touch this


        #dot_speed           = 0.003
        #noise_dots_speed    = dot_speed

        #dot_border_color    = 'red'#border color of the main dot
        #dot_color           = 'white'
        #noise_dots_color    = 'white'

        #noise_dots_lifetime = 200
        #field_size          = [1.4,0.9]




        # MODULE 3:
        # Pupilometry params: --> FROM CSV!!
        #adaptation_time = 10#10*60 # 10 MINUTES
        #flash_time = 1 # 1 s
        #rest_time = 10 # 30 s

        # Fearful & affective images params
        #autonomic_response_basal_time = 1#5
        #autonomic_response_image_time = 5
        #autonomic_response_recovery_time = 1#5

        fear_cfg = modules["module_3"]["tests"]["test_2"]["config"]

        autonomic_response_basal_time = fear_cfg["autonomic_response_basal_time"]["value"]
        autonomic_response_image_time = fear_cfg["autonomic_response_image_time"]["value"]
        autonomic_response_recovery_time = fear_cfg["autonomic_response_recovery_time"]["value"]


        # FUNCTIONS
        def comprobar_respuesta(orientacion):
            keys = event.getKeys()
            if ('right' in keys and orientacion == 45) or ('left' in keys and orientacion == 135): # Acierto:
                success                 = True
            elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
                success                 = False
            else:
                success = None
            return success

        def show_noise(dots_white, dots_black, duration, orientacion = None, feedback_txt = None):

            if noise_type == 1:
                dots_white.fieldShape = 'square'
                dots_black.fieldShape = 'square'
                dots_white.setSize(noise_field_size)
                dots_black.setSize(noise_field_size)

            elif noise_type == 2:
                dots_white.fieldShape = 'circle'
                dots_black.fieldShape = 'circle'
                dots_white.setSize(grating_size)
                dots_black.setSize(grating_size)

            # Habilitar los puntos de ruido
            dots_white.setAutoDraw(True)
            dots_black.setAutoDraw(True)

            noise_timer = core.Clock()
            noise_timer.reset()

            # Mostrar el ruido durante el tiempo de duración especificado
            while noise_timer.getTime() < duration:
                win.flip()  # Actualiza la ventana en cada frame para mantener la animación
                #igual se puede asignar una duración x al ruido y no tener que hacer esta guarrada
                # show feedback during noise
                if (advanced_config["feedback"]["value"] == True) and (orientacion is not None) and (feedback_txt is not None):
                    success = comprobar_respuesta(orientacion)
                    if success is not None:
                        show_feedback(feedback_txt, success)

            # Desactivar los puntos de ruido
            dots_white.setAutoDraw(False)
            dots_black.setAutoDraw(False)

        def get_random_orientation():
            return random.choice([45, 135])

        def get_threshold(test_var_name : str, results_csv_path):
            data = pd.read_csv(results_csv_path)

            # Filtrar filas con reversals
            reversal_data = data[data['reversals'] > 0]

            threshold = reversal_data[test_var_name].tail(n_reversals_to_average).mean()

            return threshold

        def show_feedback(feedback_txt, success):
            if success != -1 and success:
                feedback_txt.color = "green"
                feedback_txt.setText("¡BIEN! ✓")
            elif success != -1 and not success:
                feedback_txt.color = "red"
                feedback_txt.setText("MAL X")
            else:
                feedback_txt.setText("")

            # Función interna para borrar el texto después del ruido
            def clear_text():
                time.sleep(staircase_noise_duration)
                feedback_txt.setText("")  # Limpia el texto

            # Crear y lanzar el hilo para que borre el texto
            t = threading.Thread(target=clear_text)
            t.start()  # Inicia el hilo para que la ejecución principal continúe

            return


        def load_sf():
            archivo_sf = f"./data/{expInfo['participant']}/sf_staircase_data_{expInfo['participant']}.csv"
            try:
                test_sf = get_threshold('spatial_frequency', archivo_sf)
                print(f'Se ha cargado la frecuencia espacial testada con un valor de {test_sf}')
                return test_sf

            except FileNotFoundError:
                print(f'Error: El archivo {archivo_sf} no fue encontrado.')
                return -1

            except Exception as e:
                print(f'Error al cargar la frecuencia espacial del archivo {archivo_sf}: {str(e)}')
                return -1

        import matplotlib.pyplot as plt

        def generate_staircase_test_graph(test_var_name: str, results_csv_path: str):
            # Comprobar si el archivo existe
            if not os.path.exists(results_csv_path):
                print(f"[AVISO] No se encontró el archivo: {results_csv_path}")
                return -1

            data = pd.read_csv(results_csv_path)

            # Filtrar filas con reversals
            reversal_data = data[data['reversals'] > 0]

            # Calcular el umbral como la media de las últimas n inversiones
            n_reversals_to_average = 9
            threshold = reversal_data[test_var_name].tail(n_reversals_to_average).mean()

            # Preparar carpeta de salida
            input_dir = os.path.dirname(results_csv_path)
            output_dir = os.path.join(input_dir, 'processed_data')
            os.makedirs(output_dir, exist_ok=True)

            # Crear nombre de archivo de salida
            filename = f'staircase_{test_var_name}.png'
            output_path = os.path.join(output_dir, filename)

            # Graficar
            plt.figure(figsize=(10, 6))
            plt.plot(data['trial'], data[test_var_name], marker='o', linestyle='-', label=f'Stimulus {test_var_name}')
            plt.axhline(y=threshold, color='r', linestyle='--', label=f'Threshold = {threshold:.3f}')

            plt.xlabel('Number of Trials')
            plt.ylabel(f'Stimulus {test_var_name}')
            plt.title(f'Stimulus {test_var_name} Across Trials')
            plt.legend()
            plt.grid(True)

            # Guardar gráfico
            plt.savefig(output_path, bbox_inches='tight')
            plt.close()

            print(f"Umbral estimado: {threshold:.3f}")
            print(f"Gráfico guardado en: {output_path}")

            return threshold
      Begin Experiment:
        continueRoutine_ref = [True]

        global noise_type

        FEEDBACK = advanced_config["feedback"]["value"]
        if advanced_config["full_screen_noise"]["value"]: # 1: FULL WINDOW // 2: ONLY STIM.
            noise_type = 1
            print("Stablished noise type 1")
        else:
            noise_type = 2
            print("Stablished noise type 2")


        # smooth pursuit
        noise_dots_coherence = 0.0
        noise_coherent_motion = 0.0 # bool
        noise_dots_direction= 45.0
        desvio = 0
      End Experiment:
        #staircase_data_filename = f"./data/{expInfo['participant']}/sf_staircase_data_{expInfo['participant']}.csv"
        #generate_staircase_test_graph(results_csv_path=staircase_data_filename, test_var_name='spatial_frequency')
        #staircase_data_filename = f"./data/{expInfo['participant']}/contrast_staircase_data_{expInfo['participant']}.csv"
        #generate_staircase_test_graph(results_csv_path=staircase_data_filename, test_var_name='contrast')
        #staircase_data_filename = f"./data/{expInfo['participant']}/saturation_staircase_data_{expInfo['participant']}_green.csv"
        #generate_staircase_test_graph(results_csv_path=staircase_data_filename, test_var_name='saturation')
        #staircase_data_filename = f"./data/{expInfo['participant']}/saturation_staircase_data_{expInfo['participant']}_red.csv"
        #generate_staircase_test_graph(results_csv_path=staircase_data_filename, test_var_name='saturation')
  Routine SACCADE_TASK
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    CodeComponent code_12
      Code Type = Py
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      Begin Experiment:
        # GLOBAL VARIABLES: POSITION OF FIXATION POINT AND PERIPHEREAL STIMULI POSITION

        #3 POSSIBLE POSITIONS:
        FIXATION_POS = (0,0)
        PERIPHEREAL_POS_L = (-0.75,0)
        PERIPHEREAL_POS_R = (0.75,0)

        IPAST_stim_position = (0,0) # ESTE VALOR ES VARIABLE (CAMBIA SEGUN LA SECUENCIA IPAST)

        # OTHER
        REST_TIME = 1
        IPAST_fixation_circle_size = (0.05, 0.05)
      Begin Routine:
        # CHANGE BACKGROUND COLOR TO BALCK
        win.color = "black"

        # SHOW STIMULI WITH COLOR
        #if task_type == "saccade":
        #    polygon_5.color = "green"
        #elif task_type == "antisaccade":
        #    polygon_5.color = "red"

        if task_type == "saccade":
            polygon_5.vertices = "square"
            polygon_5.ori = 0
            polygon_5.size = (0.10, 0.10)
        elif task_type == "antisaccade":
            polygon_5.vertices = "cross"
            polygon_5.ori = 45
            polygon_5.size = (0.05, 0.05)

        # --- FIXATION CIRCUNFERENCES ---
        #  RGB 0-255
        fill_rgb = [255, 255, 255]        # color del relleno
        line_rgb = [255, 255, 255]  # color del borde

        # Transparencias independientes (0 = invisible, 1 = opaco)
        fill_alpha = 0.15   # relleno transparente
        line_alpha = 1.0   # borde opaco

        circles = [circle_1, circle_2, circle_3]

        for c in circles:
            # opacity global a 1 para que NO multiplique el alfa de cada color
            c.opacity = 1.0
            # relleno con su propia transparencia
            c.fillColorSpace = 'rgba255'
            c.fillColor = fill_rgb + [fill_alpha]
            # borde con su propia transparencia
            c.lineColorSpace = 'rgba255'
            c.lineColor = line_rgb + [line_alpha]
      Each Frame:
        # SEQUENCE

        # SHOW / HIDE STIMULI
        if t> 3.5 + REST_TIME: # End of Routine
            polygon_5.setAutoDraw(False)
            continueRoutine = False

        elif t>1.2 + REST_TIME: # Saccade time
            if alignment == "l":
                IPAST_stim_position = PERIPHEREAL_POS_L
            elif alignment == "r":
                IPAST_stim_position = PERIPHEREAL_POS_R
            polygon_5.color = "white"
            polygon_5.setAutoDraw(True)

        elif t>1 + REST_TIME:
            polygon_5.setAutoDraw(False)

        elif t>0 + REST_TIME:
            polygon_5.setAutoDraw(True)
            IPAST_stim_position = FIXATION_POS

        else: # wait some time between trials
            polygon_5.setAutoDraw(False)

        if 'space' in key_resp_27.keys:
            print("INTENTANDO CANCELAR RUTINAS...")

            continueRoutine = False  # detener rutina actual

            # Lista de posibles bucles activos
            possible_loops = [
                'SACCADE_TRIALS',
                'ANTISACCADE_TRIALS',
                'SACCADE_AND_ANTISACCADE_IPAST_LOOP',
                'MODULE_2_TEST_3',
                'MODULE_2',
                'saccade_instructions',
                'antisaccade_instructions',
                'antisaccade_and_antisaccade_instructions'
            ]

            for loop_name in possible_loops:
                try:
                    loop_obj = eval(loop_name)
                    # Registrar cancelación y marcar como terminado
                    if hasattr(loop_obj, 'addData'):
                        loop_obj.addData('cancelled', True)
                    if hasattr(loop_obj, 'finished'):
                        loop_obj.finished = True
                    print(f"→ {loop_name} detenido correctamente.")
                except NameError:
                    # no existe ese loop en este contexto
                    pass
                except Exception as e:
                    print(f"No se pudo detener {loop_name}: {e}")
                    pass

        #text_2.text = f"Time: {t:.2f}"
    PolygonComponent circle_1
      fillColor = white
      pos = IPAST_stim_position
      shape = circle
      size = IPAST_fixation_circle_size
      startVal [time (s)] = 0.0
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    PolygonComponent circle_2
      fillColor = white
      pos = PERIPHEREAL_POS_L
      shape = circle
      size = IPAST_fixation_circle_size
      startVal [time (s)] = 0.0
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    PolygonComponent circle_3
      fillColor = white
      pos = PERIPHEREAL_POS_R
      shape = circle
      size = IPAST_fixation_circle_size
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_5
      fillColor = white
      pos [set every frame] = IPAST_stim_position
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      disabled = True
      letterHeight = 0.05
      pos = (0.5, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_27
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.25
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  Routine ET_RESTING_STATE
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    CodeComponent code_13
      Code Type = Py
      Begin Routine:
        win.color = eye_tracking_resting_state_background_color

        last_second = None
      Each Frame:
        if t>eye_tracking_resting_state_time:
            continueRoutine = False

        # Solo actualizar el texto si ha cambiado el segundo
        current_second = int(t)
        if advanced_config["logs"]["value"] and current_second != last_second:
            text_3.setText(str(eye_tracking_resting_state_time - current_second))
            last_second = current_second  # Actualizar el último segundo registrado

        elif advanced_config["logs"]["value"] == False and current_second != last_second:
            print(str(eye_tracking_resting_state_time - current_second))
            last_second = current_second
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine ET_SCREEN_POINT_TASK
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    CodeComponent code_27
      Code Type = Py
      Begin Routine:
        win.color = eye_tracking_resting_state_background_color
      Each Frame:
        if t>eye_tracking_resting_state_time:
            continueRoutine = False




        # Solo actualizar el texto si ha cambiado el segundo
        current_second = int(t)
        if advanced_config["logs"]["value"] and current_second != last_second:
            text_5.setText(str(eye_tracking_resting_state_time - current_second))
            last_second = current_second  # Actualizar el último segundo registrado

        elif advanced_config["logs"]["value"] == False and current_second != last_second:
            print(str(eye_tracking_resting_state_time - current_second))
            last_second = current_second
    TextComponent text_5
      letterHeight = 0.05
      pos = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_9
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_26
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine VISUAL_SEARCH_RINGS
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    PolygonComponent polygon_10
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    CodeComponent code_28
      Code Type = Py
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      Begin Routine:
        import re

        win.color = "white"

        def calcular_relacion_aspecto(ruta_archivo):
            """
            Extrae los números del primer paréntesis en el nombre del archivo y calcula la relación de aspecto.

            :param ruta_archivo: Ruta completa o nombre del archivo (str).
            :return: Relación de aspecto (float).
            """
            # Extraer solo el nombre del archivo (ignorar la ruta previa)
            nombre_archivo = ruta_archivo.split("\\")[-1] if "\\" in ruta_archivo else ruta_archivo.split("/")[-1]
            print(ruta_archivo)
            print(nombre_archivo)
            # Buscar el primer paréntesis y extraer los números
            match = re.search(r"\((\d+),\s*(\d+)\)", nombre_archivo)
            if match:
                filas = int(match.group(1))
                columnas = int(match.group(2))
                # Calcular la relación de aspecto (filas/columnas)
                relacion_aspecto = filas / columnas
                return relacion_aspecto
            else:
                raise ValueError("No se encontraron números en el primer paréntesis del nombre del archivo.")
        print(f"intentando calcular relación de aspecto de la imagen {static_vs_img_relative_path}")
        relacion_aspecto = calcular_relacion_aspecto(static_vs_img_relative_path)
        print(f"Relación de aspecto: {relacion_aspecto:.2f}")
      Each Frame:
        if t>vs_image_time + vs_wait_time:
            continueRoutine = False

        #if t>visual_search_image_time:
        #    rings_img.autoDraw=False

        keys = event.getKeys()
        if 'space' in keys:
            trials_2.finished = True
    ImageComponent rings_img
      image [set every repeat] = $static_vs_img_relative_path
      interpolate = nearest
      size [set every repeat] = (1.5, 1.5 / relacion_aspecto)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = vs_image_time
      texture resolution = 512
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    KeyboardComponent key_resp_28
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent GP_data_adq_backend_3
      Code Type = Py
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      Begin Experiment:
        def convert_to_psychopy_units(FPOGX, FPOGY, screen_bounds):
            """
            Convierte las coordenadas normalizadas de Gazepoint a coordenadas centradas
            en el sistema de PsychoPy.

            Parámetros:
            - FPOGX: Coordenada X normalizada de Gazepoint (0 a 1)
            - FPOGY: Coordenada Y normalizada de Gazepoint (0 a 1)
            - screen_bounds: Límites de la pantalla en PsychoPy, donde los valores
              se definen como (x_min, y_max, x_max, y_min)

            Retorna:
            - Coordenadas X y Y centradas en el sistema de PsychoPy
            """

            x_min, y_max, x_max, y_min = screen_bounds

            # Mapeo de FPOGX (0.0 a 1.0) a PsychoPy (x_min a x_max)
            x_psychopy = x_min + (FPOGX * (x_max - x_min))

            # Mapeo de FPOGY (0.0 a 1.0) a PsychoPy (y_min a y_max)
            y_psychopy = -(y_min + (FPOGY * (y_max - y_min)))

            return x_psychopy, y_psychopy


        screen_bounds = (-0.89, 0.5, 0.89, -0.5)  # Definir los límites de la pantalla en unidades PsychoPy (x_min, y_max, x_max, y_min)
      Begin Routine:
        import socket

        # Host machine IP
        HOST = '127.0.0.1'
        PORT = 4242
        ADDRESS = (HOST, PORT)

        # Variable global para controlar si el gaze está disponible
        gaze_enabled = modules["module_2"]["tests"]["test_5"]["config"]["show_gaze"]["value"]#True
        gaze_position = (0, 0)  # valor por defecto

        try:
            # Intentar conectar al eye tracker
            s = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
            s.connect(ADDRESS)

            # Enviar comandos de inicio
            s.send(str.encode('<SET ID="ENABLE_SEND_CURSOR" STATE="1" />\r\n'))
            s.send(str.encode('<SET ID="ENABLE_SEND_POG_FIX" STATE="1" />\r\n'))
            s.send(str.encode('<SET ID="ENABLE_SEND_DATA" STATE="1" />\r\n'))

        except Exception as e:
            gaze_enabled = False
            print("WARNING: Eye tracker no detectado. No se visualizará el gaze en pantalla.")
            print(f"Detalles del error: {e}")
      Each Frame:
        if gaze_enabled:
            try:
                # Recibir datos
                rxdat = s.recv(1024)
                data_r = bytes.decode(rxdat)

                FPOGX = -1
                FPOGY = -1

                datalist = data_r.split(" ")

                for el in datalist:
                    if (el.find("FPOGX") != -1):
                        FPOGX = float(el.split("\"")[1])
                    if (el.find("FPOGY") != -1):
                        FPOGY = float(el.split("\"")[1])

                x_psychopy, y_psychopy = convert_to_psychopy_units(FPOGX, FPOGY, screen_bounds)
                gaze_position = (x_psychopy, y_psychopy)

            except Exception as e:
                print("ERROR al leer datos del eye tracker:", e)
                gaze_position = (0, 0)
        else:
            # Opcional: puedes definir una posición neutral si no hay eye tracker
            gaze_position = (-1, -1)
      End Routine:
        s.close()
    PolygonComponent gaze
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      opacity = 0.4
      pos [set every frame] = gaze_position
      saveStartStop = False
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine FEARFUL_AND_AFFECTIVE_IMAGES_TASK
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    CodeComponent code_29
      Code Type = Py
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      Begin Routine:
        win.color = "black"

        def calcular_relacion_aspecto(ruta_archivo):
            """
            Calcula la relación de aspecto de una imagen a partir de su anchura y altura.

            :param ruta_archivo: Ruta completa de la imagen (str).
            :return: Relación de aspecto (float).
            """
            try:
                with Image.open(ruta_archivo) as img:
                    anchura, altura = img.size
                    return anchura / altura
            except Exception as e:
                raise ValueError(f"Error al abrir la imagen: {e}")

        relacion_aspecto = calcular_relacion_aspecto(affective_image_relative_path_1 + affective_image_relative_path_2)
        print(affective_image_relative_path_1 + affective_image_relative_path_2)
        print(relacion_aspecto)
        if advanced_config["logs"]["value"]:
            logs_29.text = f"Img path: {affective_image_relative_path_1 + affective_image_relative_path_2}"
      Each Frame:
        if t>autonomic_response_basal_time + autonomic_response_image_time + autonomic_response_recovery_time:
            continueRoutine = False
    ImageComponent affective_image
      image [set every repeat] = $(affective_image_relative_path_1 + affective_image_relative_path_2)
      interpolate = nearest
      size [set every repeat] = (relacion_aspecto,1)
      startVal [time (s)] = autonomic_response_basal_time
      stopVal [duration (s)] = autonomic_response_image_time
      texture resolution = 512
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    KeyboardComponent key_resp_29
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent logs_29
      letterHeight = 0.02
      pos = (-0.2, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine SF_DATASET_GENERATOR
    RoutineSettingsComponent SF_DATASET_GENERATOR
      disabled = True
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    CodeComponent SPATIAL_FREQUENCY_FILTERS_CODE_2
      Code Type = Py
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      Begin Routine:
        import numpy as np
        from skimage import io, img_as_ubyte

        def cpd_to_radius(cpd, image_width, screen_width_cm, distance_to_screen_cm, dpi):
            """Convert CPD to radius for the Fourier transform."""
            pixels_per_cm = dpi / 2.54  # DPI to px/cm
            pixels_per_degree = (distance_to_screen_cm * np.tan(np.radians(1))) * pixels_per_cm
            cycles_per_pixel = cpd / pixels_per_degree
            return int(cycles_per_pixel * (image_width / 2))

        def normalize_image(image):
            """Normalizes the image to a range of 0-255 (uint8)."""
            image_normalized = np.real(image)
            image_normalized -= image_normalized.min()
            image_normalized /= image_normalized.max()
            return img_as_ubyte(image_normalized)

        def bandpass_filter_image(image, mask, min_cpd, max_cpd, image_width, screen_width_cm, distance_to_screen_cm, dpi):
            """Aplica un filtro paso banda entre min_cpd y max_cpd."""
            min_radius = cpd_to_radius(min_cpd, image_width, screen_width_cm, distance_to_screen_cm, dpi)
            max_radius = cpd_to_radius(max_cpd, image_width, screen_width_cm, distance_to_screen_cm, dpi)

            # Fourier Transform
            f_transform = np.fft.fft2(image * mask)
            f_transform_shifted = np.fft.fftshift(f_transform)

            # Crear máscara paso banda
            rows, cols = image.shape
            crow, ccol = rows // 2, cols // 2
            y, x = np.ogrid[:rows, :cols]
            distance_squared = (x - ccol) ** 2 + (y - crow) ** 2

            bandpass_mask = np.logical_and(distance_squared >= min_radius**2, distance_squared <= max_radius**2).astype(float)

            # Aplicar filtro
            bandpass_frequencies = f_transform_shifted * bandpass_mask

            # Transformada inversa
            filtered_image = np.fft.ifft2(np.fft.ifftshift(bandpass_frequencies))

            return normalize_image(filtered_image)

        def process_image_bandpass(image, mask, cpd_ranges, output_dir, image_file, image_width):
            """Aplica filtros paso banda con rangos de CPD y guarda imágenes."""
            for (min_cpd, max_cpd) in cpd_ranges:
                band_output_dir = os.path.join(output_dir, f"bandpass_{min_cpd}_{max_cpd}_cpd")
                os.makedirs(band_output_dir, exist_ok=True)

                filtered_image = bandpass_filter_image(
                    image, mask, min_cpd, max_cpd, image_width,
                    screen_width_cm, distance_to_screen_cm, screen_resolution_dpi
                )

                io.imsave(os.path.join(band_output_dir, f"{image_file}"), filtered_image) #keep original name
                print(f"Processed {image_file} with CPD range {min_cpd}-{max_cpd}")

        def extract_spatial_frequencies_bandpass(input_dir, generated_imgs_dir, cpd_ranges):
            for root, _, files in os.walk(input_dir):
                output_dir = generated_imgs_dir#os.path.join(root, "Processed_Bandpass_SF")
                os.makedirs(output_dir, exist_ok=True)

                for image_file in files:
                    if image_file.endswith(('.png', '.jpg', '.jpeg', '.bmp')):
                        image_path = os.path.join(root, image_file)
                        image = io.imread(image_path, as_gray=True)
                        mask = np.ones_like(image)

                        process_image_bandpass(image, mask, cpd_ranges, output_dir, image_file, image.shape[1])


        # testtttt
        print("\n--- Configuración de módulos y tests ---")
        for module_id, module in modules.items():
            print(f"\n{module['name']} (selected: {module['selected']})")
            for test_id, test in module["tests"].items():
                print(f"  - {test['name']} (selected: {test['selected']})")
                if "config" in test:
                    for key, val in test["config"].items():
                        print(f"      {key}: {val}")



        # TENGO QUE AÑADIR ALGO COMO [CONFIG]

        screen_width_cm         = float(modules["module_1"]["tests"]["test_4"]["config"]["screen_width_cm"])
        distance_to_screen_cm   = float(modules["module_1"]["tests"]["test_4"]["config"]["distance_to_screen_cm"])
        screen_resolution_dpi   = float(modules["module_1"]["tests"]["test_4"]["config"]["screen_resolution_dpi"])


        print("##### Cargados ls valores de la pantalla:  ")
        print(screen_width_cm, distance_to_screen_cm, screen_resolution_dpi)


        input_base_dir = r"..\..\2.DATASETS\SiBurmuin_50_images_dataset\raw"
        generated_imgs_dir = r".\images\autogenerated_datasets\spatial_frequency_filters"
        sf_images_cpd_ranges = [(1, 3), (4, 6), (10, 18)]

        extract_spatial_frequencies_bandpass(input_base_dir, generated_imgs_dir, sf_images_cpd_ranges)

        continueRoutine = False
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = ESPERE UN MOMENTO...
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  Routine BL_6_SEMANTIC_COLOR
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    PolygonComponent img_white_background
      fillColor = white
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_30
      allowedKeys = 'space', 'right', 'left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background
      disabled = True
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code_30
      Code Type = Py
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      Begin Routine:
        ####################################################
        ########____LOAD STAIRCASE TEST RESULTS____#########
        ####################################################

        #contrast_threshold = threshold_dict['contrast_threshold']
        semantic_stim_3.contrast = 1#contrast_threshold + contrast_threshold*offset_porcentual

        logs_parametros_trial_10.alignText='left'
        logs_parametros_trial_10.anchorHoriz='left'

        event.clearEvents()

        first_frame             = True
        flag_skip_all           = False
        flag_answer_registered  = False
        success                 = -1
        undecided               = False

        ################################################
        ########_______GENERATE IMG PATH_______#########
        ################################################
        color_semantic_stim_path = ''
        path_prefix = r"./images/autogenerated_datasets/module_1_images/"
        path_semantic_category = ""

        if respuesta == 'vivo':
            path_semantic_category = 'animals/'
        elif respuesta == 'inerte':
            path_semantic_category = 'objects/'

        color_semantic_stim_path = path_prefix + path_semantic_category + 'colored_silhouette/' + semantic_color_filename
      Each Frame:
        if advanced_config["logs"]["value"]:
                logs_parametros_trial_10.setText(
                f"Prueba 6 - Estímulos semánticos + COLOR\n"
                f"Intento: {intento}\n"
                f"Excentricidad: {excentricidad}º\n"
                f"Tamaño Estímulo: {tamanyo:.2f}\n"
                f"Tipo: {respuesta}\n"
            )

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        flag_skip_all           = False
        flag_answer_registered  = False
        undecided               = False
        success                 = -1

        keys = event.getKeys()
        if 'space' in keys:
            flag_skip_all = True

        elif 'right' in keys and respuesta == 'vivo': # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'left' in keys and respuesta == 'inerte': # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
            flag_answer_registered  = True
            success                 = False
        elif 'down' in keys or 'a' in keys: # NS/NC
            flag_answer_registered  = True
            success                 = False
            undecided               = True

        ####################################################
        ###############____TIME & NOISE____#################
        ####################################################

        if first_frame: # Ejecucion unica
            dots_white_11.setAutoDraw(False)
            dots_black_11.setAutoDraw(False)
            first_time = False

        if (t>stim_time) or flag_answer_registered: # time exceeded OR answer registered
            # SHOW RESULTS IF FEEDBACK ACTIVATED
            if advanced_config["feedback"]["value"]:
                print(f"El resultado es: {success}")
                show_feedback(feedback_txt_7, success)
            semantic_stim_3.setAutoDraw(False)
            show_noise(dots_white_11, dots_black_11, response_time, 0, feedback_txt_7) #only one call
            continueRoutine = False

        if flag_skip_all:
            trials_bl_6.finished = True
    TextComponent logs_parametros_trial_10
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent right_arrow_3
      fillColor = white
      ori = 90
      pos = (0.65, 0)
      shape = arrow
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent left_arrow_3
      fillColor = white
      ori = -90
      pos = (-0.65, 0)
      shape = arrow
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent right_arrow_text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0.65, 0)
      startVal [time (s)] = 0.0
      text = Ser vivo
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    TextComponent left_arrow_text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.65, 0)
      startVal [time (s)] = 0.0
      text = Inerte
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    DotsComponent dots_white_11
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_11
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    ImageComponent semantic_stim_3
      image [set every repeat] = $color_semantic_stim_path
      interpolate = nearest
      pos = (0.0, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent feedback_txt_7
      letterHeight = 0.085
      startVal [time (s)] = 0.0
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  Routine TUTORIAL_SF
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    GratingComponent grating_9
      mask = $grating_mask
      saveStartStop = False
      size = grating_size
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    DotsComponent dots_black_12
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_white_12
      coherence = 1.0
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    CodeComponent code_32
      Code Type = Py
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      Begin Experiment:
        import random

        def get_random_orientation():
            return random.choice([45, 135])

        def get_random_sf():
            return random.randint(15, 100)
      Begin Routine:
        import csv

        # Variables estaticas
        sf_starting_value = 30
        sf_step_size = 15
        sf_starting_orientation = get_random_orientation()


        # Inicializacion de variables que posteriormente cambian
        sf = sf_starting_value
        step = sf_step_size
        trial_orientation = sf_starting_orientation
        reversals = 0
        last_direction = None
        reversal_sf = []
        correct_responses = 0
        trials = []
        consecutive_hits = 0 # para saber cuandoa acabar el tutorial

        # Para almacenar las respuestas del participante
        response = None

        # Acciones inicio de rutina
        grating_9.sf = sf
        grating_9.ori = trial_orientation
        arrow.ori = 45 if trial_orientation == 45 else -45

        dots_white_12.setAutoDraw(False)
        dots_black_12.setAutoDraw(False)
      Each Frame:
        keys = event.getKeys()

        if 's' in keys: # El paciente ve el estimulo
            response = True
        elif 'a' in keys: # El paciente no ve las lineas
            response = False
        elif 'right' in keys and trial_orientation == 45: # Acierto
            response = True
        elif 'left' in keys and trial_orientation == 135: # Acierto
            response = True
        elif 'right' in keys or 'left' in keys:
            response = False

        if 'space' in keys:
            flag_skip_all = True

        # Lógica del staircase
        if response is not None:
            show_feedback(feedback_txt_8, response)
            grating_9.setAutoDraw(False)
            show_noise(dots_white_12, dots_black_12, staircase_noise_duration)
            grating_9.setAutoDraw(True)

            # Actualizar el sf y orientacion del estímulo
            grating_9.sf = get_random_sf()
            trial_orientation = get_random_orientation()
            grating_9.ori = trial_orientation
            arrow.ori = 45 if trial_orientation == 45 else -45

            # Actualizar contador de aciertos consecutivos
            if response:
                consecutive_hits += 1
            else:
                consecutive_hits = 0  # resetear si fallo

            if consecutive_hits > 2:
                arrow.setAutoDraw(False)   # ocultar si supera 3 aciertos
            elif consecutive_hits == 0:
                arrow.setAutoDraw(True)    # reaparece si vuelve a 0

            # Interrumpir rutina si hay 5 aciertos seguidos
            if consecutive_hits >= 6:
                continueRoutine = False

            # Restablecer la respuesta para el siguiente ensayo
            response = None

        #########################################################
        #############____________LOGS_________###################
        #########################################################
        if advanced_config["logs"]["value"]:
            logs_14.text = "TUTORIAL"
        else:
            logs_14.setAutoDraw(False)

        dots_white_12.setAutoDraw(False)
        dots_black_12.setAutoDraw(False)
    KeyboardComponent key_resp_31
      allowedKeys = 's','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent logs_14
      letterHeight = 0.025
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp_32
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Vamos con una prueba corta. ¿Hacia donde apuntan las líneas?
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    PolygonComponent arrow
      fillColor = -1.0000, -1.0000, 0.0902
      shape = arrow
      size = (0.05, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent feedback_txt_8
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine AUTOGENERATED_DATASETS_GENERATOR
    RoutineSettingsComponent AUTOGENERATED_DATASETS_GENERATOR
      disabled = True
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        GARGANDO...
        SE ESTÁN GENERANDO LAS IMÁGENES
        ESPERE POR FAVOR
    CodeComponent IMAGE_GENERATION
      Code Type = Py
      Begin Routine:
        ##################################################
        ## EN ESTA RUTINA SE TIENEN QUE GENERAR LOS DATASETS
        ## TODO: COMPROBAR MÓDULOS SELECCIONADOS --> GENERAR IMÁGENES PARA ESTOS MÓDULOS --> TERMINAR RUTINA
        ## TODO: AÑADIR BOTON EN LA GUI PARA OMITIR GENERACIÓN DE IMÁGENES.
        ## TEMP: DEJO LAS IMÁGENES GENERADAS EN SRC/ ANTES DE TOMAR NINGUNA DECISIÓN SOBRE COMO ORGANIZAR ESTA RUTINA, FICHEROS, ETC.
        ##################################################

        print("Importando codigo 1...")

        from python_scripts import colored_silhouettes


        print("Importando codigo 2...")
        from python_scripts import blank_silhouettes
        print("Importado codigo 2 :)")

        from python_scripts import spatial_frequencies


        print("Generando siluetas...")
        blank_silhouettes.process_images( # TODO: coger nombres de imágenes desde los archivos de config.
            raw_dir=r"../../../2.DATASETS/begibraintool_image_selection/00_IMAGE_SELECTION_FOR_DEMO",
            output_dir=r"./images/autogenerated_datasets/module_1_images",
            apply_bw=False,
            apply_subject_removal=False,
            apply_bg_bw=False,
            apply_subject_bw=False,
            apply_silhouette_creation=True
        )
        print("Coloreando siluetas...")
        #colored_silhouettes.generate_from_csv(csv_path='./BL6.csv', output_root='./images/autogenerated_datasets/color_silhouetes') # ruta desde .psyexp
        spatial_frequencies.extract_from_folder(
            #input_dir=r"../images/autogenerated_datasets/module_1_images/raw", o:
            input_dir=r"../../../2.DATASETS/begibraintool_image_selection/00_IMAGE_SELECTION_FOR_DEMO",
            output_dir=r"../images/autogenerated_datasets/module_1_images/",
            cpd_ranges=[(1, 3), (4, 6), (10, 18)],
            screen_width_cm=float(30),
            distance_to_screen_cm=float(50),
            dpi=float(300)
        )

        # When finised continue to next routine
        continueRoutine = False
    CodeComponent SPATIAL_FREQUENCY_DATASET_GENERATOR
      Code Type = Py
      disabled = True
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      Begin Routine:
        import numpy as np
        from skimage import io, img_as_ubyte

        def cpd_to_radius(cpd, image_width, screen_width_cm, distance_to_screen_cm, dpi):
            """Convert CPD to radius for the Fourier transform."""
            pixels_per_cm = dpi / 2.54  # DPI to px/cm
            pixels_per_degree = (distance_to_screen_cm * np.tan(np.radians(1))) * pixels_per_cm
            cycles_per_pixel = cpd / pixels_per_degree
            return int(cycles_per_pixel * (image_width / 2))

        def normalize_image(image):
            """Normalizes the image to a range of 0-255 (uint8)."""
            image_normalized = np.real(image)
            image_normalized -= image_normalized.min()
            image_normalized /= image_normalized.max()
            return img_as_ubyte(image_normalized)

        def bandpass_filter_image(image, mask, min_cpd, max_cpd, image_width, screen_width_cm, distance_to_screen_cm, dpi):
            """Aplica un filtro paso banda entre min_cpd y max_cpd."""
            min_radius = cpd_to_radius(min_cpd, image_width, screen_width_cm, distance_to_screen_cm, dpi)
            max_radius = cpd_to_radius(max_cpd, image_width, screen_width_cm, distance_to_screen_cm, dpi)

            # Fourier Transform
            f_transform = np.fft.fft2(image * mask)
            f_transform_shifted = np.fft.fftshift(f_transform)

            # Crear máscara paso banda
            rows, cols = image.shape
            crow, ccol = rows // 2, cols // 2
            y, x = np.ogrid[:rows, :cols]
            distance_squared = (x - ccol) ** 2 + (y - crow) ** 2

            bandpass_mask = np.logical_and(distance_squared >= min_radius**2, distance_squared <= max_radius**2).astype(float)

            # Aplicar filtro
            bandpass_frequencies = f_transform_shifted * bandpass_mask

            # Transformada inversa
            filtered_image = np.fft.ifft2(np.fft.ifftshift(bandpass_frequencies))

            return normalize_image(filtered_image)

        def process_image_bandpass(image, mask, cpd_ranges, output_dir, image_file, image_width):
            """Aplica filtros paso banda con rangos de CPD y guarda imágenes."""
            for (min_cpd, max_cpd) in cpd_ranges:
                band_output_dir = os.path.join(output_dir, f"bandpass_{min_cpd}_{max_cpd}_cpd")
                os.makedirs(band_output_dir, exist_ok=True)

                filtered_image = bandpass_filter_image(
                    image, mask, min_cpd, max_cpd, image_width,
                    screen_width_cm, distance_to_screen_cm, screen_resolution_dpi
                )

                io.imsave(os.path.join(band_output_dir, f"{image_file}"), filtered_image) #keep original name
                print(f"Processed {image_file} with CPD range {min_cpd}-{max_cpd}")

        def extract_spatial_frequencies_bandpass(input_dir, generated_imgs_dir, cpd_ranges):
            for root, _, files in os.walk(input_dir):
                output_dir = generated_imgs_dir#os.path.join(root, "Processed_Bandpass_SF")
                os.makedirs(output_dir, exist_ok=True)

                for image_file in files:
                    if image_file.endswith(('.png', '.jpg', '.jpeg', '.bmp')):
                        image_path = os.path.join(root, image_file)
                        image = io.imread(image_path, as_gray=True)
                        mask = np.ones_like(image)

                        process_image_bandpass(image, mask, cpd_ranges, output_dir, image_file, image.shape[1])


        screen_width_cm         = float(modules["module_1"]["tests"]["test_4"]["config"]["screen_width_cm"])
        distance_to_screen_cm   = float(modules["module_1"]["tests"]["test_4"]["config"]["distance_to_screen_cm"])
        screen_resolution_dpi   = float(modules["module_1"]["tests"]["test_4"]["config"]["screen_resolution_dpi"])


        print("##### Cargados ls parámetros de la pantalla:  ")
        print(screen_width_cm, distance_to_screen_cm, screen_resolution_dpi)


        # TODO: cambiar como se escriben las rutas a high, medium, low o magno, neutro, parvo
        input_base_dir = r"..\..\2.DATASETS\SiBurmuin_50_images_dataset\raw"
        generated_imgs_dir = r".\images\autogenerated_datasets\spatial_frequency_filters"
        sf_images_cpd_ranges = [(1, 3), (4, 6), (10, 18)]

        extract_spatial_frequencies_bandpass(input_base_dir, generated_imgs_dir, sf_images_cpd_ranges)

        continueRoutine = False
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        GARGANDO...
        SE ESTÁN GENERANDO LAS IMÁGENES
        ESPERE POR FAVOR
  Routine TUTORIAL_BUTTON_PANEL
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  Routine DYNAMIC_VISUAL_SEARCH
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    CodeComponent code_4
      Code Type = Py
      Before Experiment:
        # === CONFIGURACIÓN ESTÁTICA ===
        import random
        from psychopy import visual
        import numpy as np
        import matplotlib.pyplot as plt

        dvs_cfg = modules["module_2"]["tests"]["test_6"]["config"]
        MAX_TIME = dvs_cfg["visual_search_image_time"]["value"]
        dvs_wait_time = dvs_cfg["visual_search_wait_time"]["value"]
        ROTATION_SPEED = dvs_cfg["visual_search_rotation_speed"]["value"]
        MATRIX_SIZE = dvs_cfg["visual_search_matrix_size"]["value"]
        IN_PHASE = dvs_cfg["disks_in_phase"]["value"]

        try:
            if isinstance(MATRIX_SIZE, (list, tuple)):
                MATRIX_SIZE = [int(x) for x in MATRIX_SIZE]
                print(MATRIX_SIZE)
            else:
                raise ValueError("Formato no reconocido para visual_search_matrix_size")
        except Exception as e:
            print(f"Error al interpretar visual_search_matrix_size ({raw_matrix_size}): {e}")
            # Valor por defecto seguro
            MATRIX_SIZE = [3, 3]

        # Velocidad angular de rotación (grados por frame o segundo según el refresh)
        #ROTATION_SPEED = 90      # grados/seg
        #MAX_TIME = 5.0           # segundos de duración del trial
        #MATRIX_SIZE = (3, 3)     # filas x columnas

        # Tamaño de cada disco (imagen)
        DISK_SIZE = (0.25, 0.25)  # en unidades PsychoPy
        # Puedes ajustarlo según tu imagen o proporción de pantalla

        # Definir los límites de pantalla en unidades PsychoPy
        screen_bounds = (-0.89, 0.6, 0.89, -0.6)

        # Definir lista de archivos de imagen de discos
        # Cada disco es un archivo individual, por ejemplo "disk.png"
        DISK_IMAGE = r".\images\autogenerated_datasets\dynamic_visual_search_ring\disk.png"

        # === FUNCIÓN PARA CREAR MATRIZ DE POSICIONES ===
        def create_grid_positions(rows, cols, bounds, disk_size):
            """
            Crea una lista de posiciones (x, y) distribuidas uniformemente
            dentro de los límites dados de pantalla.
            """
            x_min, y_max, x_max, y_min = bounds
            x_positions = np.linspace(x_min + disk_size[0], x_max - disk_size[0], cols)
            y_positions = np.linspace(y_min + disk_size[1], y_max - disk_size[1], rows)
            positions = [(x, y) for y in reversed(y_positions) for x in x_positions]
            return positions

        def generate_ring_with_gap_png(
            gap_angle=0,
            inner_radius=0.6,
            outer_radius=1.0,
            gap_size=40,
            resolution=200,
            filename="disk.png"
        ):
            """
            Generate a centered ring with a transparent gap and save it as a PNG.

            :param gap_angle: Central angle (in degrees) where the gap will appear.
            :param inner_radius: Inner radius of the ring.
            :param outer_radius: Outer radius of the ring.
            :param gap_size: Angular size of the transparent gap (in degrees).
            :param resolution: Image resolution in pixels (square image).
            :param filename: Output PNG filename.
            """
            # Create a grid of normalized coordinates
            y, x = np.ogrid[-1:1:complex(resolution), -1:1:complex(resolution)]
            r = np.sqrt(x**2 + y**2)
            ang = np.degrees(np.arctan2(y, x)) % 360

            # Ring mask
            ring_mask = (r >= inner_radius) & (r <= outer_radius)

            # Calculate angular limits of the gap
            gap_start = (gap_angle - gap_size / 2) % 360
            gap_end = (gap_angle + gap_size / 2) % 360

            # Handle wrap-around at 0°
            if gap_start < gap_end:
                gap_mask = (ang >= gap_start) & (ang <= gap_end)
            else:
                gap_mask = (ang >= gap_start) | (ang <= gap_end)

            # Combine: ring minus gap
            final_mask = ring_mask & ~gap_mask

            # Create an RGBA image (transparent by default)
            img = np.zeros((resolution, resolution, 4), dtype=np.float32)
            img[..., 0:3] = 0  # black color
            img[..., 3] = final_mask.astype(float)  # alpha channel (1 = opaque ring)

            # Save as PNG with transparency
            plt.imsave(filename, img)
            print(f"Ring with transparent gap saved as {filename}")
      Begin Experiment:
        frame_rate = win.getActualFrameRate()

        # ==== CREATE IMAGE IF MISSING ====
        if not os.path.exists(DISK_IMAGE):
            print(f"Image not found: {DISK_IMAGE}. Generating it now...")
            generate_ring_with_gap_png(
                gap_angle=90,
                inner_radius=0.6,
                outer_radius=1.0,
                gap_size=40,
                filename=DISK_IMAGE
            )
      Begin Routine:
        win.color = 'white'

        # Esperar 2 segundos manteniendo la pantalla en blanco
        blankClock = core.Clock()
        while blankClock.getTime() < dvs_wait_time:
            win.flip()

        # ==== INICIALIZAR ESTÍMULOS ====
        positions = create_grid_positions(MATRIX_SIZE[0], MATRIX_SIZE[1], screen_bounds, DISK_SIZE)
        target_index = random.randint(0, len(positions)-1)
        disks = []

        for i, pos in enumerate(positions):
            # Si IN_PHASE es False, asignar orientación aleatoria
            initial_ori = 0 if IN_PHASE else random.uniform(0, 360)

            disk = visual.ImageStim(
                win=win,
                image=DISK_IMAGE,
                pos=pos,
                size=DISK_SIZE,
                ori=initial_ori
            )
            disk.rotation_dir = -1 if i == target_index else 1
            disks.append(disk)

        routine_timer = core.Clock()

        # Medir frame rate una sola vez
        #frame_rate = win.getActualFrameRate()
        if frame_rate is None or frame_rate <= 0:
            frame_rate = 60.0
        frame_dur = 1.0 / frame_rate
      Each Frame:
        t = routine_timer.getTime()

        if t < MAX_TIME:
            for disk in disks:
                disk.ori += disk.rotation_dir * ROTATION_SPEED * frame_dur
                disk.draw()
        else:
            continueRoutine = False

        keys = event.getKeys()
        if 'space' in keys:
            trials_3.finished = True
      End Routine:
        thisExp.addData('dynamic_vs_target_index', target_index)
        thisExp.addData('dynamic_vs_target_position', positions[target_index])
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TUTORIAL_SEMANTIC_SF_COLOR_CS
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    KeyboardComponent key_resp_33
      allowedKeys = 'space', 'right', 'left'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background_15
      disabled = True
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code_31
      Code Type = Py
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      Begin Routine:
        logs_parametros_trial_8.alignText='left'
        logs_parametros_trial_8.anchorHoriz='left'

        path_prefix = r".\instructions\module_1\tutorial_semantic_sf_color_contrast\tutorial_trials_imgs/"

        # TODO:
        # if 'marvo' r"./images/autogenerated_datasets/module_1_images/high¿?"
        # if 'neutro' r"./images/autogenerated_datasets/module_1_images/medium"
        # if 'parvo' r"./images/autogenerated_datasets/module_1_images/low"

        path_img_type = ""
        path_semantic_category = ""

        if tipo == 'sf_magno':
            path_img_type = 'bandpass_0_3_cpd/'
        elif tipo == 'sf_neutro':
            path_img_type = 'bandpass_3_6_cpd/'
        elif tipo == 'sf_parvo':
            path_img_type = 'bandpass_6_30_cpd/'
        elif tipo == 'color':
            path_img_type = 'colored_silhouette/'
        else:
            print("ERROR: Unrecognized category")

        if respuesta == 'vivo':
            path_semantic_category = 'animals/'
        elif respuesta == 'inerte':
            path_semantic_category = 'objects/'

        sf_semantic_stim_path = path_prefix + path_semantic_category + path_img_type + tutorial_filename

        event.clearEvents()

        first_frame             = True
        flag_skip_all           = False
        flag_answer_registered  = False
        success                 = -1
        undecided               = False
      Each Frame:
        if advanced_config["logs"]["value"]:
            logs_parametros_trial_11.setText(
                f"TUTORIAL estímulos semánticos\n"
                f"Intento: {intento}\n"
                f"Tipo: {tipo}\n"
                #f"Ancho pantalla cm: {screen_width_cm}\n"       #= float(modules["module_1"]["tests"]["test_4"]["config"]["screen_width_cm"])
                #f"Distancia sujeto-pantalla cm: {distance_to_screen_cm}\n" #    = float(modules["module_1"]["tests"]["test_4"]["config"]["distance_to_screen_cm"])
                #f"Resolución pantalla dpi: {screen_resolution_dpi}\n" #    = float(modules["module_1"]["tests"]["test_4"]["config"]["screen_resolution_dpi"])
            )

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        flag_skip_all           = False
        flag_answer_registered  = False
        undecided               = False
        success                 = -1

        keys = event.getKeys()
        if 'space' in keys:
            flag_skip_all = True

        elif 'right' in keys and respuesta == 'vivo': # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'left' in keys and respuesta == 'inerte': # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
            flag_answer_registered  = True
            success                 = False
        elif 'down' in keys: # NS/NC
            flag_answer_registered  = True
            success                 = False
            undecided               = True

        ####################################################
        ###############____TIME & NOISE____#################
        ####################################################

        if first_frame: # Ejecucion unica
            dots_white_13.setAutoDraw(False)
            dots_black_13.setAutoDraw(False)
            first_time = False

        if (t>stim_time+4) or flag_answer_registered: # time exceeded OR answer registered
            show_feedback(feedback_txt_9, success)
            semantic_stim_4.setAutoDraw(False)
            show_noise(dots_white_13, dots_black_13, response_time, 0, feedback_txt_9) #only one call
            continueRoutine = False

        if flag_skip_all:
            semantic_tutorial_loop.finished = True
    TextComponent logs_parametros_trial_11
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent right_arrow_4
      fillColor = white
      ori = 90
      pos = (0.65, 0)
      shape = arrow
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent left_arrow_4
      fillColor = white
      ori = -90
      pos = (-0.65, 0)
      shape = arrow
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent right_arrow_text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0.65, 0)
      startVal [time (s)] = 0.0
      text = Ser vivo
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    TextComponent left_arrow_text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.65, 0)
      startVal [time (s)] = 0.0
      text = Inerte
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    ImageComponent semantic_stim_4
      image [set every repeat] = $sf_semantic_stim_path
      pos = (0.0, 0)
      size [set every repeat] = tamanyo
      startVal [time (s)] = 0.0
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    DotsComponent dots_white_13
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_13
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    TextComponent feedback_txt_9
      letterHeight = 0.085
      startVal [time (s)] = 0.0
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Flow
  Routine calibration_routine
  Routine CONFIGURATION_ROUTINE
  Routine AUTOGENERATED_DATASETS_GENERATOR
  LoopInitiator loop_instruction_welcome_screen loopType="TrialHandler"
    conditionsFile = $instruction_welcome_screen
    loopType = random
    nReps = 1
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    Routine INSTRUCTIONS
  LoopTerminator loop_instruction_welcome_screen
  LoopInitiator tutorial_button_panel loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = general_config["start_tutorial"]["value"]
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    LoopInitiator loop_instruction_tutorial_button_panel loopType="TrialHandler"
      conditionsFile = $instruction_tutorial_button_panel
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine INSTRUCTIONS
    LoopTerminator loop_instruction_tutorial_button_panel
    Routine TUTORIAL_BUTTON_PANEL
  LoopTerminator tutorial_button_panel
  LoopInitiator PROTOCOL loopType="TrialHandler"
    conditionsFile = CSV_protocol_config_files/protocols/protocol_pilot.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    LoopInitiator MODULE_1 loopType="TrialHandler"
      loopType = sequential
      nReps = modules["module_1"]["selected"]
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      LoopInitiator MODULE_1_PRETEST loopType="TrialHandler"
        loopType = sequential
        nReps = int(modules["module_1"]["tests"]["pretest"]["selected"] and protocol_step == "M1_PRETEST")
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        LoopInitiator loop_instruction_m1_sf_staircase_1 loopType="TrialHandler"
          conditionsFile = $instruction_m1_sf_staircase_1
          isTrials = False
          loopType = random
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m1_sf_staircase_1
        LoopInitiator tutorial_sf loopType="TrialHandler"
          isTrials = False
          loopType = sequential
          nReps = general_config["test_tutorial"]["value"]
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          Routine TUTORIAL_SF
          LoopInitiator loop_instruction_m1_sf_staircase_2 loopType="TrialHandler"
            conditionsFile = $instruction_m1_sf_staircase_2
            isTrials = False
            loopType = sequential
            nReps = 1
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            Routine INSTRUCTIONS
          LoopTerminator loop_instruction_m1_sf_staircase_2
        LoopTerminator tutorial_sf
        Routine SPATIAL_FREQ_STAIRCASE_TEST
        LoopInitiator loop_instruction_m1_contrast_staircase loopType="TrialHandler"
          conditionsFile = $instruction_m1_contrast_staircase
          isTrials = False
          loopType = random
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m1_contrast_staircase
        Routine CONTRAST_STAIRCASE_TEST
        LoopInitiator loop_instruction_m1_color_staircase loopType="TrialHandler"
          conditionsFile = $instruction_m1_color_staircase
          isTrials = False
          loopType = sequential
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m1_color_staircase
        LoopInitiator colors_to_test loopType="TrialHandler"
          conditionsFile = colors_to_test.xlsx
          isTrials = False
          loopType = sequential
          nReps = 1
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          Routine COLOR_STAIRCASE_TEST
        LoopTerminator colors_to_test
      LoopTerminator MODULE_1_PRETEST
      LoopInitiator load_thresholds loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = protocol_step not in ("M1_BL1_SF", "M1_BL2_CONTRAST", "M1_BL3_COLOR", "M1_BL4_SEMANTIC_SF", "M1_BL5_SEMANTIC_CONTRAST", "M1_BL6_SEMANTIC_COLOR")
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        Routine LOAD_THRESHOLDS
      LoopTerminator load_thresholds
      LoopInitiator MODULE_1_TEST_1 loopType="TrialHandler"
        loopType = sequential
        nReps = int(modules["module_1"]["tests"]["test_1"]["selected"] and protocol_step == "M1_BL1_SF")
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        LoopInitiator loop_instruction_m1_bl1 loopType="TrialHandler"
          conditionsFile = $instruction_m1_bl1
          isTrials = False
          loopType = sequential
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m1_bl1
        LoopInitiator trials_bl_1 loopType="TrialHandler"
          conditionsFile = CSV_protocol_config_files/module_1_test_1_SF.csv
          loopType = sequential
          nReps = 1
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          Routine BL_1_SPATIAL_FREQ
        LoopTerminator trials_bl_1
      LoopTerminator MODULE_1_TEST_1
      LoopInitiator MODULE_1_TEST_2 loopType="TrialHandler"
        loopType = random
        nReps = int(modules["module_1"]["tests"]["test_3"]["selected"] and protocol_step == "M1_BL2_CONTRAST")
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        LoopInitiator loop_instruction_m1_bl2 loopType="TrialHandler"
          conditionsFile = $instruction_m1_bl2
          isTrials = False
          loopType = sequential
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m1_bl2
        LoopInitiator trials_bl_2 loopType="TrialHandler"
          conditionsFile = CSV_protocol_config_files/module_1_test_2_CS.csv
          loopType = sequential
          nReps = 1
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          Routine BL_2_CONTRAST
        LoopTerminator trials_bl_2
      LoopTerminator MODULE_1_TEST_2
      LoopInitiator MODULE_1_TEST_3 loopType="TrialHandler"
        loopType = sequential
        nReps = int(modules["module_1"]["tests"]["test_2"]["selected"] and protocol_step == "M1_BL3_COLOR")
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        LoopInitiator loop_instruction_m1_bl3 loopType="TrialHandler"
          conditionsFile = $instruction_m1_bl3
          isTrials = False
          loopType = sequential
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m1_bl3
        LoopInitiator trials_bl_3 loopType="TrialHandler"
          conditionsFile = CSV_protocol_config_files/module_1_test_3_COLOR.csv
          loopType = sequential
          nReps = 1
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          Routine BL_3_COLOR
        LoopTerminator trials_bl_3
      LoopTerminator MODULE_1_TEST_3
      LoopInitiator tutorial_semantic_sf_color_contrast loopType="TrialHandler"
        loopType = random
        nReps = int(general_config["test_tutorial"]["value"] and (modules["module_1"]["tests"]["test_4"]["selected"] + modules["module_1"]["tests"]["test_5"]["selected"] + modules["module_1"]["tests"]["test_6"]["selected"]) > 0 and protocol_step == "M1_TUTORIAL_SEMANTIC")
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        LoopInitiator loop_instruction_m1_tutorial_semantic loopType="TrialHandler"
          conditionsFile = $instruction_m1_tutorial_semantic
          isTrials = False
          loopType = random
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m1_tutorial_semantic
        LoopInitiator semantic_tutorial_loop loopType="TrialHandler"
          conditionsFile = instructions/module_1/tutorial_semantic_sf_color_contrast/tutorial_sequence.csv
          isTrials = False
          loopType = random
          nReps = 1
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          Routine TUTORIAL_SEMANTIC_SF_COLOR_CS
        LoopTerminator semantic_tutorial_loop
      LoopTerminator tutorial_semantic_sf_color_contrast
      LoopInitiator MODULE_1_TEST_4 loopType="TrialHandler"
        loopType = random
        nReps = int(modules["module_1"]["tests"]["test_4"]["selected"] and protocol_step == "M1_BL4_SEMANTIC_SF")
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        LoopInitiator loop_instruction_m1_bl4 loopType="TrialHandler"
          conditionsFile = $instruction_m1_bl4
          isTrials = False
          loopType = random
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m1_bl4
        Routine SF_DATASET_GENERATOR
        LoopInitiator trials_bl_4 loopType="TrialHandler"
          Selected rows = 50:104
          conditionsFile = CSV_protocol_config_files/module_1_test_4_SEMANTIC_SF.csv
          loopType = random
          nReps = 1
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          Routine BL_4_SEMANTIC_SF
        LoopTerminator trials_bl_4
      LoopTerminator MODULE_1_TEST_4
      LoopInitiator MODULE_1_TEST_5 loopType="TrialHandler"
        loopType = random
        nReps = int(modules["module_1"]["tests"]["test_5"]["selected"] and protocol_step == "M1_BL5_SEMANTIC_CONTRAST")
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        LoopInitiator loop_instruction_m1_bl5 loopType="TrialHandler"
          conditionsFile = $instruction_m1_bl5
          isTrials = False
          loopType = random
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m1_bl5
        LoopInitiator trials_bl_5 loopType="TrialHandler"
          Selected rows = 50:104
          conditionsFile = CSV_protocol_config_files/module_1_test_5_SEMANTIC_CS.csv
          loopType = random
          nReps = 1
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          Routine BL_5_SEMANTIC_CONTRAST
        LoopTerminator trials_bl_5
      LoopTerminator MODULE_1_TEST_5
      LoopInitiator MODULE_1_TEST_6 loopType="TrialHandler"
        loopType = random
        nReps = int(modules["module_1"]["tests"]["test_6"]["selected"] and protocol_step == "M1_BL6_SEMANTIC_COLOR")
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        LoopInitiator loop_instruction_m1_bl6 loopType="TrialHandler"
          conditionsFile = $instruction_m1_bl6
          isTrials = False
          loopType = random
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m1_bl6
        LoopInitiator trials_bl_6 loopType="TrialHandler"
          Selected rows = 50:104
          conditionsFile = CSV_protocol_config_files/module_1_test_6_SEMANTIC_COLOR.csv
          loopType = random
          nReps = 1
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          Routine BL_6_SEMANTIC_COLOR
        LoopTerminator trials_bl_6
      LoopTerminator MODULE_1_TEST_6
    LoopTerminator MODULE_1
    LoopInitiator MODULE_2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = modules["module_2"]["selected"]
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      LoopInitiator MODULE_2_TEST_1 loopType="TrialHandler"
        loopType = sequential
        nReps = int(modules["module_2"]["tests"]["test_1"]["selected"] and protocol_step == "M2_RESTING_AND_FIXATION")
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        LoopInitiator loop_instruction_m2_1_1_resting_et loopType="TrialHandler"
          conditionsFile = $instruction_m2_1_1_resting_et
          isTrials = False
          loopType = sequential
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m2_1_1_resting_et
        Routine ET_RESTING_STATE
        LoopInitiator loop_instruction_m2_1_2_et loopType="TrialHandler"
          conditionsFile = $instruction_m2_1_2_et
          isTrials = False
          loopType = sequential
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m2_1_2_et
        Routine ET_SCREEN_POINT_TASK
      LoopTerminator MODULE_2_TEST_1
      LoopInitiator MODULE_2_TEST_2 loopType="TrialHandler"
        loopType = sequential
        nReps = int(modules["module_2"]["tests"]["test_2"]["selected"] and protocol_step == "M2_FFT")
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        LoopInitiator loop_instruction_m2_2_fft loopType="TrialHandler"
          conditionsFile = $instruction_m2_2_fft
          loopType = sequential
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m2_2_fft
        Routine FFT_STAIRCASE_TEST
      LoopTerminator MODULE_2_TEST_2
      LoopInitiator MODULE_2_TEST_3 loopType="TrialHandler"
        loopType = random
        nReps = int(modules["module_2"]["tests"]["test_3"]["selected"] and protocol_step == "M2_SACCADES")
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        LoopInitiator loop_instruction_m2_3_1_saccade loopType="TrialHandler"
          conditionsFile = $instruction_m2_3_1_saccade
          isTrials = False
          loopType = sequential
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m2_3_1_saccade
        LoopInitiator SACCADE_TRIALS loopType="TrialHandler"
          conditionsFile = CSV_protocol_config_files/module_2_test_3_saccades/saccade_loop.xlsx
          isTrials = False
          loopType = sequential
          nReps = 1
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          Routine SACCADE_TASK
        LoopTerminator SACCADE_TRIALS
        LoopInitiator loop_instruction_m2_3_2_antisaccade loopType="TrialHandler"
          conditionsFile = $instruction_m2_3_2_antisaccade
          loopType = sequential
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m2_3_2_antisaccade
        LoopInitiator ANTISACCADE_TRIALS loopType="TrialHandler"
          conditionsFile = CSV_protocol_config_files/module_2_test_3_saccades/antisaccade_loop.xlsx
          isTrials = False
          loopType = sequential
          nReps = 1
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          Routine SACCADE_TASK
        LoopTerminator ANTISACCADE_TRIALS
        LoopInitiator loop_instruction_m2_3_3_saccade_and_antisaccade loopType="TrialHandler"
          conditionsFile = $instruction_m2_3_3_saccade_and_antisaccade
          loopType = sequential
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m2_3_3_saccade_and_antisaccade
        LoopInitiator SACCADE_AND_ANTISACCADE_IPAST_LOOP loopType="TrialHandler"
          conditionsFile = CSV_protocol_config_files/module_2_test_3_saccades/IPAST_loop.xlsx
          isTrials = False
          loopType = sequential
          nReps = 1
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          Routine SACCADE_TASK
        LoopTerminator SACCADE_AND_ANTISACCADE_IPAST_LOOP
      LoopTerminator MODULE_2_TEST_3
      LoopInitiator MODULE_2_TEST_4 loopType="TrialHandler"
        loopType = sequential
        nReps = int(modules["module_2"]["tests"]["test_4"]["selected"] and protocol_step == "M2_SMOOTH_PURSUIT")
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        LoopInitiator loop_instruction_m2_4_smooth_pursuit loopType="TrialHandler"
          conditionsFile = $instruction_m2_4_smooth_pursuit
          isTrials = False
          loopType = sequential
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m2_4_smooth_pursuit
        Routine SMOOTH_PURSUIT
      LoopTerminator MODULE_2_TEST_4
      LoopInitiator MODULE_2_TEST_5 loopType="TrialHandler"
        loopType = random
        nReps = int(modules["module_2"]["tests"]["test_5"]["selected"] and protocol_step == "M2_STATIC_VS")
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        LoopInitiator loop_instruction_m2_5_static_visual_search loopType="TrialHandler"
          conditionsFile = $instruction_m2_5_static_visual_search
          isTrials = False
          loopType = sequential
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m2_5_static_visual_search
        LoopInitiator trials_2 loopType="TrialHandler"
          conditionsFile = CSV_protocol_config_files/module_2_test_5_STATIC_VISUAL_SEARCH.xlsx
          isTrials = False
          loopType = sequential
          nReps = 1
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          Routine VISUAL_SEARCH_RINGS
        LoopTerminator trials_2
      LoopTerminator MODULE_2_TEST_5
      LoopInitiator MODULE_2_TEST_6 loopType="TrialHandler"
        loopType = random
        nReps = int(modules["module_2"]["tests"]["test_6"]["selected"] and protocol_step == "M2_DYNAMIC_VS")
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        LoopInitiator loop_instruction_m2_6_dynamic_visual_search loopType="TrialHandler"
          conditionsFile = $instruction_m2_6_dynamic_visual_search
          loopType = random
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m2_6_dynamic_visual_search
        LoopInitiator trials_3 loopType="TrialHandler"
          loopType = random
          nReps = 10
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          Routine DYNAMIC_VISUAL_SEARCH
        LoopTerminator trials_3
      LoopTerminator MODULE_2_TEST_6
    LoopTerminator MODULE_2
    LoopInitiator MODULE_3 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = modules["module_3"]["selected"]
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      LoopInitiator MODULE_3_TEST_1 loopType="TrialHandler"
        loopType = sequential
        nReps = int(modules["module_3"]["tests"]["test_1"]["selected"] and protocol_step == "M3_PUPILLOMETRY")
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        LoopInitiator loop_instruction_m3_pupillometry loopType="TrialHandler"
          conditionsFile = $instruction_m3_pupillometry
          isTrials = False
          loopType = sequential
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m3_pupillometry
        LoopInitiator pupilometry_config loopType="TrialHandler"
          conditionsFile = CSV_protocol_config_files/module_3_test_1_PUPILOMETRY.xlsx
          isTrials = False
          loopType = sequential
          nReps = 1
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          Routine PUPILOMETRY_TASK_adaptation_period
          Routine PUPILOMETRY_TASK_flash
        LoopTerminator pupilometry_config
      LoopTerminator MODULE_3_TEST_1
      LoopInitiator MODULE_3_TEST_2 loopType="TrialHandler"
        loopType = sequential
        nReps = int(modules["module_3"]["tests"]["test_2"]["selected"] and protocol_step == "M3_AFFECTIVE_IMAGES")
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        LoopInitiator loop_instruction_m3_fearful_affective_images loopType="TrialHandler"
          conditionsFile = $instruction_m3_fearful_affective_images
          loopType = sequential
          nReps = 1
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          Routine INSTRUCTIONS
        LoopTerminator loop_instruction_m3_fearful_affective_images
        LoopInitiator imgs_loop loopType="TrialHandler"
          conditionsFile = CSV_protocol_config_files/module_3_test_2_AFFECTIVE_IMAGES.xlsx
          loopType = sequential
          nReps = 1
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          Routine FEARFUL_AND_AFFECTIVE_IMAGES_TASK
        LoopTerminator imgs_loop
      LoopTerminator MODULE_3_TEST_2
    LoopTerminator MODULE_3
  LoopTerminator PROTOCOL
  LoopInitiator loop_instruction_end_of_experiment loopType="TrialHandler"
    conditionsFile = $instruction_end_of_experiment
    isTrials = False
    loopType = random
    nReps = 1
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    Routine INSTRUCTIONS
  LoopTerminator loop_instruction_end_of_experiment
